PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Antisaccade
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine main
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    TextComponent cross_stim
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = +
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    ImageComponent stim
      image [set every repeat] = $stimulus
      pos [set every repeat] = stim_position
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      units = height
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    ImageComponent square_poststim
      image = ressources/post_stim.png
      pos [set every repeat] = $poststim_position
      size = (0.2, 0.2)
      startVal [time (s)] = 0.15
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{position}_{correct_resp}"
        send_marker(marker)  # Function to send the LSL marker
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    KeyboardComponent response
      allowedKeys = 'left','right','up'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test_blocks
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_Antisaccade_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Antisaccade_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        # Set the text for the third set of instructions
        InstructionsText3.text = instructions['Text3']
    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        # logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('antisaccade_task_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()
        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'ANTISACCADE',
                'Text_instructions1': (
                    "Welcome to the antisaccade task\n\n\n"
                    "In this task, you will need to respond as quickly as possible to an arrow by pressing the associated key with your dominant hand.\n\nPress the space bar to continue"
                ),
                'Text_instructions2a': (
                    "The trials are constituted like this:"
                ),
                'Text_instructions2b': (
                    "(1) You first need to look at the cross in the center.\n"
                    "(2) Then, when the yellow flash appears, you need to look at the OPPOSITE side.\n"
                    "(3) This is where the arrow will appear and disappear quickly.\n"
                    "(4) Finally, press the response key on your keyboard that corresponds to the location to which this arrow is pointing.\n\n\n"
                    "Press the spacebar to begin the training."
                ),
                'Text_start_task': (
                    "The practice is over. Now we shall begin the actual experiment.\n\n"
                    "Ready?\n\n"
                    "Press the space bar to begin."
                ),
                'Text_pause_between_blocks': (
                    "Pause\n\n"
                    "Press the space bar when you are ready to continue."
                ),
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                )
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'ANTISACCADE',
                'Text_instructions1': (
                    "Bienvenue dans la tâche antisaccade\n\n\n"
                    "Dans cette tâche, vous devrez répondre le plus rapidement possible à une flèche en appuyant sur la touche associée avec votre main dominante.\n\nAppuyez sur la barre d'espace pour continuer"
                ),
                'Text_instructions2a': (
                    "Les essais sont constitués comme ceci :"
                ),
                'Text_instructions2b': (
                    "(1) Vous devez d'abord regarder la croix au centre.\n"
                    "(2) Ensuite, lorsque le flash jaune apparaît, vous devez regarder du côté OPPOSÉ.\n"
                    "(3) C'est là que la flèche apparaîtra et disparaîtra rapidement.\n"
                    "(4) Enfin, appuyez sur la touche de réponse de votre clavier qui correspond à l'emplacement vers lequel cette flèche pointe.\n\n\n"
                    "Appuyez sur la barre d'espace pour commencer l'entraînement."
                ),
                'Text_start_task': (
                    "L'entraînement est terminé. Nous allons maintenant commencer la tâche.\n\n"
                    "Prêt·e ?\n\n"
                    "Appuyez sur la barre d'espace pour commencer."
                ),
                'Text_pause_between_blocks': (
                    "Pause\n\n"
                    "Appuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer."
                ),
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine prestim
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    TextComponent cross_prestim
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_stimulus_type
      Code Type = Auto->JS
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      Begin Routine:
        # Set the size based on the soa_type
        if position == 'left':
            cue_position = (0.4, 0)
            stim_position = (-0.4, 0)
            poststim_position = (-0.4, 0)
        elif position == 'right':
            cue_position = (-0.4, 0)
            stim_position = (0.4, 0)
            poststim_position = (0.4, 0)
  Routine cue_SOA
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    ImageComponent cue_prestim
      image [set every repeat] = ressources/prestim.png
      pos [set every repeat] = $cue_position
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      units = height
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    CodeComponent LSL_cue
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("prestim")
    TextComponent cross_cue
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text = +
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  Routine instructions2
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    TextComponent InstructionsText_2a
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    TextComponent InstructionsText_2b
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    CodeComponent code_InstructionsText_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText_2a.setText(instructions['Text_instructions2a'])
        InstructionsText_2b.setText(instructions['Text_instructions2b'])
    ImageComponent instructions_img
      image = ressources/instructions.png
      pos = (0, 0.1)
      size = (0.75, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice')
    KeyboardComponent startInst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    TextComponent nametask_2
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine instructions1
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    TextComponent InstructionsText_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText_1
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText_1.setText(instructions['Text_instructions1'])
    CodeComponent LSL_Antisaccade_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Antisaccade_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instructions1
  Routine instructions2
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = antisaccade_task_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('position', 'left'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('position', 'right'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 5), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 6), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 7), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 8), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 9), ('position', 'right'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')])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
    Routine prestim
    Routine cue_SOA
    Routine main
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = antisaccade_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('position', 'left'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('position', 'right'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 5), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 6), ('position', 'right'), ('stimulus', 'resources/right.png'), ('correct_resp', 'right')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 7), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 8), ('position', 'left'), ('stimulus', 'resources/left.png'), ('correct_resp', 'left')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 9), ('position', 'right'), ('stimulus', 'resources/up.png'), ('correct_resp', 'up')])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = antisaccade_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine prestim
      Routine cue_SOA
      Routine main
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
