PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = GoNoGo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine main
    RoutineSettingsComponent main
      stopVal [duration (s)] = 1.5
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    ImageComponent stim
      image [set every repeat] = $stimulus
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      units = height
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{stimulus}"
        send_marker(marker)  # Function to send the LSL marker
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine instructions1
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    TextComponent InstructionsText1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1.setText(instructions['Text_instructions'])
    CodeComponent LSL_GoNoGo_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('GoNoGo_start')
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test_blocks
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_GoNoGo_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('GoNoGo_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        # Set the text for the third set of instructions
        InstructionsText3.text = instructions['Text3']
    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('gonogo_task_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()
        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'GoNoGo',
                'Text_instructions': (
                    "Welcome to the Go / No-Go Task\n\n"
                    "On each trial, a GREEN or a RED square will appear on the screen.\n"
                    "If the square is GREEN, press the spacebar (with your dominant hand) as QUICKLY as possible.\n"
                    "If the square is RED, do NOT press the spacebar.\n\n"
                    "Press the space bar to start the practice."
                ),
                'Text_start_task': (
                    "The practice is over. Now we shall begin the actual experiment.\nThis will consist of 4 blocks of 1 minute.\n\n"
                    "Ready?\n\n"
                    "Press the space bar to begin."
                ),
                'Text_pause_between_blocks': (
                    "Pause\n\n"
                    "Press the space bar when you are ready to continue."
                ),
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue."
                )
            }

        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'GoNoGo',
                'Text_instructions': (
                    "Bienvenue dans la tâche de Go / No-Go\n\n"
                    "À chaque essai, un rectangle VERT ou ROUGE apparaîtra à l'écran.\n"
                    "Si le rectangle est VERT, appuyez sur la barre d'espace (avec votre main dominante) le plus RAPIDEMENT possible.\n"
                    "Si le rectangle est ROUGE, n'appuyez PAS sur la barre d'espace.\n\n"
                    "Appuyez sur la barre d'espace pour commencer l'entraînement."
                ),
                'Text_start_task': (
                    "L'entraînement est terminé. Nous allons maintenant commencer la tâche.\nCette dernière sera constituée de 4 blocks d'une minute.\n\n"
                    "Prêt·e ?\n\n"
                    "Appuyez sur la barre d'espace pour commencer."
                ),
                'Text_pause_between_blocks': (
                    "Pause\n\n"
                    "Appuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer."
                ),
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine prestim
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    PolygonComponent polygon
      fillColor = white
      opacity = 0
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $ISI_60Hz
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  Routine cue_SOA
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    ImageComponent cue_prestim
      image [set every repeat] = ressources/prestim.png
      size [set every repeat] = $cue_prestim_size
      startVal [frame N] = 0
      stopVal [frame N] = $soa_frame60hz
      units = height
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    CodeComponent LSL_cue
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("cue")
Flow
  Routine init
  Routine instructions1
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = gonogo_task_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('stimulus', 'resources/nogo.png'), ('correct_resp', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 1), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 2), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 3), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 4), ('stimulus', 'resources/nogo.png'), ('correct_resp', None)]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 1), ('stimulus', 'resources/nogo.png'), ('correct_resp', None)]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 2), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 3), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 4), ('stimulus', 'resources/go.png'), ('correct_resp', 'space')])]
    Routine prestim
    Routine main
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = gonogo_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 1), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.3), ('soa_frame60hz', 18)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 2), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.4), ('soa_frame60hz', 24)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 3), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 4), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 5), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.3), ('soa_frame60hz', 18)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 6), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 7), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = gonogo_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 1), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.3), ('soa_frame60hz', 18)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 2), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.4), ('soa_frame60hz', 24)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 3), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 4), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 5), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.3), ('soa_frame60hz', 18)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 6), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)]),
        OrderedDict([('block', 'practice'), ('block_n', 0), ('trial', 7), ('cue', 'ressources/vertical_rectangle.png'), ('stimulus', 'ressources/vertical_rectangle_go.png'), ('soa_sec', 0.1), ('soa_frame60hz', 6)])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
      Routine prestim
      Routine main
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
