PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = MentalRotation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruction1
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    TextComponent helloText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent helloKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_helloText
      Code Type = Auto->JS
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      Begin Routine:
        helloText.setText(instructions['Text_instructions1'])
    CodeComponent LSL_MRT_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('MRT_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine Instruction2
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    TextComponent exampText
      letterHeight = 0.04
      pos = [0, -0.25]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    KeyboardComponent exampKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent exampIm
      image = ressources/i43_0_R.jpg
      pos = [0.0, 0.15]
      saveStartStop = False
      size = [0.5,0.35]
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_exampText
      Code Type = Auto->JS
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      Begin Routine:
        exampText.setText(instructions['Text_instructions2'])
    CodeComponent LSL_start_test
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test")
    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    TextComponent nametask_2
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine Trial
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    ImageComponent trialStimulus
      image [set every repeat] = $imagefile
      saveStartStop = False
      size = [0.7, 0.5]
      startVal [time (s)] = 0.0
      units = height
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    TextComponent textKeys
      letterHeight = 0.03
      pos = [0, -0.4]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_textKeys
      Code Type = Auto->JS
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      Begin Routine:
        textKeys.setText(instructions['Text_keys'])
    TextComponent textPuzzle
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_textPuzzle
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        textPuzzle.setText(instructions['Text_puzzle'] + str(trial) + "/100")
    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        stimulus_type = f"stimulus_{imagefile}"
        send_marker(stimulus_type)
      End Routine:
        answer_corr = f"response_{trialResp.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    KeyboardComponent trialResp
      allowedKeys [set every repeat] = 'd', 'k'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Add the key response to the data file
        thisExp.addData('trialResp.keys', trialResp.keys)
        thisExp.addData('trialResp.corr', trialResp.corr)
        if trialResp.keys is not None:  # We had a response
            thisExp.addData('trialResp.rt', trialResp.rt)
            thisExp.addData('trialResp.duration', trialResp.duration)
        thisExp.addData('imagefile', imagefile)
        thisExp.nextEntry()  # Ensure this trial's data is saved to the CSV file
  Routine init
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    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'MENTAL ROTATION',
                'Text_instructions1': (
                    "Welcome to the Mental Rotation Task.\n\n"
                    "You will see an image of two objects on the screen. They can be the same object, but rotated, or they can be different objects. For each pair, indicate if they are the same object but rotated, or if they are different objects.\n\n"
                    "Press 'd' if they are different. Press 'k' if they are the same.\n\n"
                    "Now an example image with the correct answer will follow. After that, the experiment will start.\n\n"
                    "Whenever you're ready, press the spacebar to continue."
                ),
                'Text_instructions2': (
                    "Here, you can see that the object on the right is not the object on the left but rotated, it is a different object.\nThey would still be different after mentally rotating them to line up.\n"
                    "Here you would press 'd' for different. If they were the same, you would press 'k'.\n"
                    "Try to respond as accurately as you can. Also try to be fast, but emphasize being accurate.\n\n"
                    "Press the spacebar to start the experiment."
                ),
                'Text_puzzle': "Puzzle ",
                'Text_keys': "press 'd' for different         press 'k' for same",
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                )
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'ROTATION MENTALE',
                'Text_instructions1': (
                    "Bienvenue dans la tâche de Rotation Mentale.\n\n"
                    "Vous allez voir des images de deux objets à l'écran. Ils peuvent être le même objet, mais tournés, ou ils peuvent être différents. Pour chaque paire, indiquez s'ils sont le même objet mais tournés, ou s'ils sont différents.\n\n"
                    "Appuyez sur 'd' s'ils sont différents. Appuyez sur 'k' s'ils sont les mêmes.\n\n"
                    "Une image d'exemple avec la réponse correcte va suivre. Après cela, l'expérience commencera.\n\n"
                    "Appuyez sur la barre d'espace pour continuer."
                ),
                'Text_instructions2': (
                    "Ici, vous pouvez voir que l'objet à droite n'est pas l'objet à gauche mais tourné, c'est un objet différent.\nIls seraient toujours différents après les avoir mentalement tournés pour les aligner.\n"
                    "Ici, vous appuieriez sur 'd' pour différent. S'ils étaient les mêmes, vous appuieriez sur 'k'.\n"
                    "Essayez de répondre aussi précisément que possible. Essayez également d'être rapide, mais mettez l'accent sur la précision.\n\n"
                    "Appuyez sur la barre d'espace pour commencer l'expérience."
                ),
                'Text_puzzle': "Puzzle ",
                'Text_keys': "appuyez sur 'd' pour différent         appuyez sur 'k' pour identique",
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine end
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    CodeComponent LSL_MRT_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('MRT_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_cross
    RoutineSettingsComponent fixation_cross
      stopVal [duration (s)] = 1.7
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.2
      text = +
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    TextComponent textPuzzle_2
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_textPuzzle_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        textPuzzle_2.setText(instructions['Text_puzzle'] + str(trial) + "/100")
    TextComponent textKeys_2
      letterHeight = 0.03
      pos = [0, -0.4]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_textKeys_2
      Code Type = Auto->JS
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      Begin Routine:
        textKeys_2.setText(instructions['Text_keys'])
Flow
  Routine init
  Routine Instruction1
  Routine Instruction2
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = mentalrotationstimuli.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('imagefile', 'ressources/i14_50_R.jpg'), ('corrAns', 'd'), ('angle', 50)]),
      OrderedDict([('trial', 2), ('imagefile', 'ressources/i36_100_R.jpg'), ('corrAns', 'd'), ('angle', 100)]),
      OrderedDict([('trial', 3), ('imagefile', 'ressources/i23_150_R.jpg'), ('corrAns', 'd'), ('angle', 150)]),
      OrderedDict([('trial', 4), ('imagefile', 'ressources/i6_100.jpg'), ('corrAns', 'k'), ('angle', 100)]),
      OrderedDict([('trial', 5), ('imagefile', 'ressources/i30_150.jpg'), ('corrAns', 'k'), ('angle', 150)]),
      OrderedDict([('trial', 6), ('imagefile', 'ressources/i19_50.jpg'), ('corrAns', 'k'), ('angle', 50)]),
      OrderedDict([('trial', 7), ('imagefile', 'ressources/i23_50.jpg'), ('corrAns', 'k'), ('angle', 50)]),
      OrderedDict([('trial', 8), ('imagefile', 'ressources/i19_150_R.jpg'), ('corrAns', 'd'), ('angle', 150)]),
      OrderedDict([('trial', 9), ('imagefile', 'ressources/i45_100_R.jpg'), ('corrAns', 'd'), ('angle', 100)]),
      OrderedDict([('trial', 10), ('imagefile', 'ressources/i11_100.jpg'), ('corrAns', 'k'), ('angle', 100)]),
      OrderedDict([('trial', 11), ('imagefile', 'ressources/i41_100_R.jpg'), ('corrAns', 'd'), ('angle', 100)]),
      OrderedDict([('trial', 12), ('imagefile', 'ressources/i31_150.jpg'), ('corrAns', 'k'), ('angle', 150)]),
      OrderedDict([('trial', 13), ('imagefile', 'ressources/i26_50.jpg'), ('corrAns', 'k'), ('angle', 50)]),
      OrderedDict([('trial', 14), ('imagefile', 'ressources/i4_100.jpg'), ('corrAns', 'k'), ('angle', 100)])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
    Routine fixation_cross
    Routine Trial
  LoopTerminator loop
  Routine end
