PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Oddball
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine init
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    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task': 'ODDBALL',
                'Text_instructions': (
                    "Welcome to the Oddball Task.\n\n\n"
                    "In this task, you will need to pay attention to sounds.\n"
                    "When you hear a high-pitched sound, press 'E'.\nWhen you hear a low-pitched sound, no response is required.\n\n"
                    "As an example, you can press 'E' to hear a high-pitched sound.\n\n\n"
                    "Press the spacebar when you are ready to begin the task."
                ),
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue."
                )
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task': 'ODDBALL',
                'Text_instructions': (
                    "Bienvenue dans la tâche d'Oddball.\n\n\n"
                    "Dans cette tâche, vous allez devoir prêter attention à des sons.\n"
                    "Lorsque vous entendrez un son aigu, appuyez sur 'E'.\nLorsque vous entendrez un son grave, aucune réponse n'est requise.\n\n"
                    "Pour avoir un exemple de son aigu, vous pouvez appuyer sur 'E'.\n\n\n"
                    "Appuyez sur la barre d'espace lorsque vous êtes prêt·e pour commencer la tâche."
                ),
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer."
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock
        from psychopy import core

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine instructions1
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    TextComponent InstructionsText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText.setText(instructions['Text_instructions'])
    CodeComponent LSL_Oddball_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Oddball_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_sound_high
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            sound_high.play()  # Play the high-pitched sound when 'S' is pressed
    SoundComponent sound_high
      sound [set every repeat] = ressources/high.wav
      startVal [condition] = False
      syncScreenRefresh = False
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  Routine end
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    TextComponent InstructionsText_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText_end
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText_end.setText(instructions['Text_end_task'])
    CodeComponent LSL_Oddball_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Oddball_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine oddball_sounds
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    TextComponent empty_screen
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time_trial
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    SoundComponent sound_oddball
      sound [set every repeat] = $'ressources/' + sound + '.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    CodeComponent LSL_oddball_sound
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("oddball_" + sound)
Flow
  Routine init
  Routine instructions1
  LoopInitiator loop_Oddball loopType="TrialHandler"
    conditionsFile = oddball_task_psychopy.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('time', 1.0), ('time_trial', 1.35), ('trial', 1), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 2.35), ('time_trial', 1.2), ('trial', 2), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 3.55), ('time_trial', 1.8), ('trial', 3), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 5.35), ('time_trial', 1.35), ('trial', 4), ('sound', 'high'), ('frequency', 800)]),
      OrderedDict([('time', 6.7), ('time_trial', 1.65), ('trial', 5), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 8.35), ('time_trial', 1.5), ('trial', 6), ('sound', 'high'), ('frequency', 800)]),
      OrderedDict([('time', 9.85), ('time_trial', 1.65), ('trial', 7), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 11.5), ('time_trial', 1.8), ('trial', 8), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 13.3), ('time_trial', 1.5), ('trial', 9), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 14.8), ('time_trial', 1.2), ('trial', 10), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 16.0), ('time_trial', 1.2), ('trial', 11), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 17.2), ('time_trial', 1.5), ('trial', 12), ('sound', 'low'), ('frequency', 400)]),
      OrderedDict([('time', 18.7), ('time_trial', 1.8), ('trial', 13), ('sound', 'high'), ('frequency', 800)]),
      OrderedDict([('time', 20.5), ('time_trial', 1.65), ('trial', 14), ('sound', 'low'), ('frequency', 400)])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
    Routine oddball_sounds
  LoopTerminator loop_Oddball
  Routine end
