PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = VAC
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine main
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    PolygonComponent visual_stim
      fillColor = white
      pos [set every repeat] = (0, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_response
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{position_visual}_{position_auditory}_{congruence}"
        send_marker(marker)  # Function to send the LSL marker
      End Routine:
        answer_corr = f"response_{key_response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    CodeComponent code_stimulus
      Code Type = Auto->JS
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      Begin Experiment:
        # At the beginning of the experiment
        from psychopy import prefs
        prefs.hardware['audioLib'] = ['pyo']
        from psychopy import sound

        # Paths to the sound files
        left_sound_file = 'ressources/left.wav'
        right_sound_file = 'ressources/right.wav'

        # Load the sound files
        left_stim = sound.Sound(left_sound_file, stereo=True)
        right_stim = sound.Sound(right_sound_file, stereo=True)
      Begin Routine:
        # Set the position of the visual stimulus
        if position_visual == 'left':
            visual_stim.pos = (-0.5, 0)
        else:
            visual_stim.pos = (0.5, 0)

        # Play the appropriate auditory stimulus
        if position_auditory == 'left':
            left_stim.play()
        else:
            right_stim.play()
  Routine instructions_practice1
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent InstructionsText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    CodeComponent code_InstructionsText
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText.setText(instructions['Text_instructions1'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    CodeComponent LSL_start_VAC
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('VAC_start')
      End Routine:
        send_marker('VAC_practice_start')
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_VAC_end
      Code Type = Auto->JS
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      End Routine:
        send_marker('VAC_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('visual_auditory_conflict_task_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[(scenario_df['block'] == 'practice')].tolist()
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1] + 1}" if practice_indices else ""
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        if language == "English":
            instructions = {
                'name_task' : 'VISUAL-AUDITORY CONFLICT',
                'Text_instructions1': "Welcome to the Visual-Auditory Conflict task.\n\nIn this task, you will first need to focus on the fixation cross in the center of the screen.\nA circle will then appear on either the left or right side of the screen, while a tone will be simultaneously emitted in either the left or right speaker.\n\nYour goal is to respond to the visual stimulus (circle) in some trials and to the auditory stimulus (sound) in others.\n\nPress the spacebar to continue",
                'Text_instructions2': "Let's begin with practice.\n\nIn the practice, you will see which stimulus you need to respond with a word on the top of the screen (e.g. visual or auditory).\n\nPress 'd' when the stimulus is on the left, or 'k' when it is on the right.\n\nPress the spacebar to start the practice.",
                'Text_trainingover': "The training is now over.\nPress the spacebar to continue.",
                'Text_start_visualtask': "Now we shall begin with a visual block.\n\nIn this block, you should indicate the side where the circle appears, ignoring the sound.\nPress 'd' when it's on the left and 'k' when it's on the right.\nTry to be as quick and as accurate as possible.\n\nReady?\n\nPress the spacebar to start.",
                'Text_start_auditorytask': "We will now begin the auditory block.\n\nIn this block, you should indicate the side where the sound appears, ignoring the circle.\nPress 'd' when it's on the left and 'k' when it's on the right.\nTry to be as quick and as accurate as possible while keeping your EYES OPEN.\n\nReady?\n\nPress the spacebar to start.",
                'Text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'CONFLIT VISUO-AUDITIF',
                'Text_instructions1': "Bienvenue dans la tâche de Conflit Visuo-Auditif.\n\nDans cette tâche, vous devrez d'abord vous concentrer sur la croix de fixation au centre de l'écran.\nUn cercle apparaîtra ensuite soit à gauche, soit à droite de l'écran, tandis qu'un son sera émis soit dans le haut-parleur gauche, soit dans le haut-parleur droit.\n\nVotre objectif est de répondre au stimulus visuel (cercle) dans certains essais et au stimulus auditif (son) dans d'autres.\n\nAppuez sur la barre d'espace pour continuer",
                'Text_instructions2': "Commençons par un entraînement.\n\nDans cet entraînement, vous verrez à quel stimulus vous devez répondre avec un mot en haut de l'écran (par exemple, visuel ou auditif).\n\nAppuyez sur 'd' quand le stimulus est à gauche, ou sur 'k' quand il est à droite.\n\nAppuyez sur la barre d'espace pour commencer l'entraînement.",
                'Text_trainingover': "L'entraînement est maintenant terminé.\nAppuyez sur la barre d'espace pour continuer.",
                'Text_start_visualtask': "Nous allons maintenant commencer par un bloc visuel.\n\nDans ce bloc, vous devez indiquer de quel côté le cercle apparaît, en ignorant le son. Appuyez sur 'd' quand il est à gauche et sur 'k' quand il est à droite.\nEssayez d'être aussi rapide et précis que possible.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'Text_start_auditorytask': "Pause\n\nNous allons maintenant commencer le bloc auditif.\n\nDans ce bloc, vous devez indiquer le côté où le son est entendu, en ignorant le cercle. Appuyez sur 'd' quand il est à gauche et sur 'k' quand il est à droite.\nEssayez d'être aussi rapide et précis que possible tout en gardant vos YEUX OUVERTS.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'Text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_VAC_block")
  Routine ITI
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    TextComponent cross_ITI
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI
      text = +
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  Routine startAuditoryTask
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    TextComponent InstructionsTextAuditory
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent go_Auditory
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsTextAuditory
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsTextAuditory.setText(instructions['Text_start_auditorytask'])
    CodeComponent LSL_start_auditory_block
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_auditory_block")
    CodeComponent define_block_rows_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 2  # auditory block
  Routine ITI_practice
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    TextComponent cross_ITI_practice
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI
      text [set every repeat] = +
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    TextComponent text_ITI_practice
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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    CodeComponent code_text_ITI_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Determine the block type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        if language == "English":
            if current_block_type == 'visual':
                text_ITI_practice.text = 'visual'
            elif current_block_type == 'auditory':
                text_ITI_practice.text = 'auditory'
        else:
            if current_block_type == 'visual':
                text_ITI_practice.text = 'visuel'
            elif current_block_type == 'auditory':
                text_ITI_practice.text = 'auditif'
  Routine main_practice
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    TextComponent cross_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    PolygonComponent visual_stim_practice
      fillColor = white
      pos [set every repeat] = (0, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_response_practice
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent LSL_stimulus_practice
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{position_visual}_{position_auditory}_{congruence}"
        send_marker(marker)  # Function to send the LSL marker
      End Routine:
        answer_corr = f"response_{key_response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    CodeComponent code_stimulus_practice
      Code Type = Auto->JS
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      Begin Experiment:
        # At the beginning of the experiment
        from psychopy import prefs
        prefs.hardware['audioLib'] = ['pyo']
        from psychopy import sound

        # Paths to the sound files
        left_sound_file = 'ressources/left.wav'
        right_sound_file = 'ressources/right.wav'

        # Load the sound files
        left_stim = sound.Sound(left_sound_file, stereo=True)
        right_stim = sound.Sound(right_sound_file, stereo=True)
      Begin Routine:
        # Set the position of the visual stimulus
        if position_visual == 'left':
            visual_stim_practice.pos = (-0.5, 0)
        else:
            visual_stim_practice.pos = (0.5, 0)

        # Play the appropriate auditory stimulus
        if position_auditory == 'left':
            left_stim.play()
        else:
            right_stim.play()
    TextComponent text_main_practice
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_main_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Determine the block type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        if language == "English":
            if current_block_type == 'visual':
                text_main_practice.text = 'visual'
            elif current_block_type == 'auditory':
                text_main_practice.text = 'auditory'
        else:
            if current_block_type == 'visual':
                text_main_practice.text = 'visuel'
            elif current_block_type == 'auditory':
                text_main_practice.text = 'auditif'
  Routine instructions_test
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    TextComponent InstructionsTextTask
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_Instructions
      Code Type = Auto->JS
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      Begin Routine:
        # Extract block_type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        # Set the instruction text based on the block type
        if current_block_type == 'visual':
            InstructionsTextTask.text = instructions['Text_start_visualtask']
        elif current_block_type == 'auditory':
            InstructionsTextTask.text = instructions['Text_start_auditorytask']
  Routine training_over
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    TextComponent trainingover_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_trainingover_text
      Code Type = Auto->JS
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      Begin Routine:
        trainingover_text.text = instructions['Text_trainingover']
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine instructions_practice2
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    KeyboardComponent startInst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent InstructionsText_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    CodeComponent code_InstructionsText_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText_2.setText(instructions['Text_instructions2'])
    TextComponent nametask_2
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    CodeComponent define_block_rows_practice
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_practice = True
Flow
  Routine init
  Routine instructions_practice1
  Routine instructions_practice2
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = visual_auditory_conflict_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 1), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 2), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 3), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 4), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 5), ('position_visual', 'left'), ('position_auditory', 'right'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 6), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 7), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'd')])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
    Routine ITI_practice
    Routine main_practice
  LoopTerminator practiceTrials
  Routine training_over
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = visual_auditory_conflict_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 1), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 2), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 3), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'visual'), ('trial', 4), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 5), ('position_visual', 'left'), ('position_auditory', 'right'), ('congruence', 'incongruent'), ('correct_resp', 'k')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 6), ('position_visual', 'left'), ('position_auditory', 'left'), ('congruence', 'congruent'), ('correct_resp', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 0), ('block_type', 'auditory'), ('trial', 7), ('position_visual', 'right'), ('position_auditory', 'left'), ('congruence', 'incongruent'), ('correct_resp', 'd')])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
    Routine block_counter
    Routine instructions_test
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = visual_auditory_conflict_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine ITI
      Routine main
    LoopTerminator testTrials
  LoopTerminator testblocks
  Routine thanks
