PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = TowerOfHanoi
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test")
    CodeComponent initialize_trial_index_test
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize trial variables
        trial_index = 0  # Start with the first block for test
        is_practice = False
        is_test = True
    KeyboardComponent StartTest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine init
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    CodeComponent logging
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'TOWER OF HANOI',
                'Text_instructions': (
                    "Welcome to the Tower of Hanoi task.\n\n\n"
                    "The goal of this task is to move disks in a rod from a start position to an end position (see example below), following these rules:\n\n"
                    "1. You can only move one disk at a time.\n"
                    "2. You can only move the top disk of any rod.\n"
                    "3. No disk may be placed on top of a smaller disk.\n\n"
                    "The goal is to complete the task in the FEWEST number of moves possible.\n\n"
                    "Press the space bar to continue."
                ),
                'Text_tower_start' : "Start position",
                'Text_tower_end' : "End position",
                'Text_practice': (
                    "You will now practice with a 3-disk example.\n\n"
                    "Using the mouse, try to move all the disks to the end position following the rules explained earlier.\n\n"
                    "Press the space bar to begin the practice trial."
                ),
                'Text_MinMoves' : "Minimal number of moves: ",
                'Text_nMoves' : "Number of moves: ",
                'Text_puzzle' : "Puzzle ",
                'Text_start_task': (
                    "The training is now over.\n\n"
                    "We will now start the actual task wich will always contains 4 disks.\n"
                    "It will be constituted of 22 trials with a time limit of 90 second per trial.\n\n"
                    "Remember that the goal is to complete the task in the FEWEST number of moves.\n"
                    "So try to plan mentally before moving the disks to make as few moves as possible.\n\n"
                    "Press the space bar to begin the task."
                ),
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                )
            }
        else:
            instructions = {
                'name_task' : 'TOUR DE HANOI',
                'Text_instructions': (
                    "Bienvenue dans la tâche de la Tour de Hanoï.\n\n\n"
                    "Le but de cette tâche est de déplacer les disques d'une tour d'une position de départ à une position de fin (voir exemple ci-dessous), en suivant ces règles:\n\n"
                    "1. Vous ne pouvez déplacer qu'un seul disque à la fois.\n"
                    "2. Vous ne pouvez déplacer que le disque supérieur de chaque tour.\n"
                    "3. Aucun disque ne peut être placé sur un disque plus petit.\n\n"
                    "L'objectif est de compléter la tâche avec le MOINS de mouvements possible.\n\n"
                    "Appuyez sur la barre d'espace pour continuer."
                ),
                'Text_tower_start': "Position de départ",
                'Text_tower_end': "Position de fin",
                'Text_practice': (
                    "Vous allez maintenant vous entraîner avec un exemple à 3 disques.\n\n"
                    "En utilisant la souris, essayez de déplacer tous les disques vers la position de fin en suivant les règles expliquées précédemment.\n\n"
                    "Appuyez sur la barre d'espace pour commencer l'entraînement."
                ),
                'Text_MinMoves': "Nombre minimal de mouvements: ",
                'Text_nMoves': "Nombre de mouvements: ",
                'Text_puzzle': "Puzzle ",
                'Text_start_task': (
                    "L'entraînement est maintenant terminé.\n\n"
                    "Nous allons maintenant commencer la tâche réelle qui contiendra toujours 4 disques.\n"
                    "Elle sera constituée de 22 essais avec une limite de temps de 90 secondes par essai.\n\n"
                    "N'oubliez pas que l'objectif est de compléter la tâche avec le MOINS de mouvements possible.\n"
                    "Essayez donc de planifier mentalement avant de déplacer les disques pour faire le moins de mouvements possible.\n\n"
                    "Appuyez sur la barre d'espace pour commencer la tâche."
                ),
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent ActivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=True)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine towertask
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    MouseComponent mouse
      clickable = disk1,disk2,disk3,disk4
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent towers
      image = ressources/towers.png
      pos = (0, -0.1)
      size = (1.8, 1.06)
      startVal [time (s)] = 0.0
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    ImageComponent disk1
      image = ressources/disk1.png
      size = (0.24, 0.036)
      startVal [time (s)] = 0.0
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    ImageComponent disk2
      image = ressources/disk2.png
      size = (0.18, 0.036)
      startVal [time (s)] = 0.0
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    ImageComponent disk3
      image = ressources/disk3.png
      size = (0.12, 0.036)
      startVal [time (s)] = 0.0
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    ImageComponent disk4
      image = ressources/disk4.png
      size = (0.06, 0.036)
      startVal [time (s)] = 0.0
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    CodeComponent code_movingdisks
      Code Type = Auto->JS
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      Begin Experiment:
        # Define target positions
        tower_positions = {
            'J1': (-0.5, -0.290), 'J2': (-0.5, -0.254), 'J3': (-0.5, -0.218), 'J4': (-0.5, -0.182),
            'K1': (0, -0.290), 'K2': (0, -0.254), 'K3': (0, -0.218), 'K4': (0, -0.182),
            'L1': (0.5, -0.290), 'L2': (0.5, -0.254), 'L3': (0.5, -0.218), 'L4': (0.5, -0.182),
            'nodisk' : (2, 2)
        }

        # Initialize tower stacks
        tower_stacks = {
            'J': [],
            'K': [],
            'L': []
        }

        selected_disk = None
        original_tower = None
      Begin Routine:
        # Initialize move counter
        move_counter = 0
        move_counter_text.setText("Number of moves: " + str(move_counter))

        # Recuperate initial disk positions
        disk_positions = {
            'disk1': disk1_init,
            'disk2': disk2_init,
            'disk3': disk3_init,
            'disk4': disk4_init
        }

        # Update tower stacks based on initial positions
        tower_stacks = {'J': [], 'K': [], 'L': []}
        for disk, pos_label in disk_positions.items():
            pos = tower_positions[pos_label]
            if pos[0] == -0.5:
                tower_stacks['J'].append(disk)
            elif pos[0] == 0:
                tower_stacks['K'].append(disk)
            elif pos[0] == 0.5:
                tower_stacks['L'].append(disk)

        # Ensure the disks are ordered correctly in the stacks
        for key in tower_stacks:
            tower_stacks[key] = sorted(tower_stacks[key], key=lambda d: tower_positions[disk_positions[d]][1])

        # Set disk positions
        disk1.setPos(tower_positions[disk_positions['disk1']])
        disk2.setPos(tower_positions[disk_positions['disk2']])
        disk3.setPos(tower_positions[disk_positions['disk3']])
        disk4.setPos(tower_positions[disk_positions['disk4']])
      Each Frame:
        # Check for mouse interaction
        mouse = event.Mouse(visible=True)
        current_pos = mouse.getPos()

        # Determine which disk is being selected
        for tower, disks in tower_stacks.items():
            for disk_name in disks:
                disk = eval(disk_name)
                if mouse.isPressedIn(disk) and selected_disk is None:
                    # Select the top disk only
                    if disk_name == disks[-1]:
                        selected_disk = disk
                        original_tower = tower

        if selected_disk:
            # Move the selected disk with the mouse
            selected_disk.setPos(current_pos)

            if not mouse.getPressed()[0]:
                # Determine the nearest tower
                nearest_tower = min(['J', 'K', 'L'], key=lambda t: (current_pos[0] - tower_positions[t+'1'][0])**2)

                # Get the current stack height of the nearest tower
                stack_height = len(tower_stacks[nearest_tower])

                if stack_height < 4:  # Only allow stacking up to 4 disks
                    nearest_pos_key = nearest_tower + str(stack_height + 1)
                    nearest_pos = tower_positions[nearest_pos_key]

                    # Check if the move is valid
                    if not tower_stacks[nearest_tower] or int(selected_disk.name[-1]) > int(tower_stacks[nearest_tower][-1][-1]):
                        # Move the disk to the new tower
                        tower_stacks[original_tower].remove(selected_disk.name)
                        tower_stacks[nearest_tower].append(selected_disk.name)
                        selected_disk.setPos(nearest_pos)
                        # Update the disk_positions dictionary
                        disk_positions[selected_disk.name] = nearest_pos_key
                        # Increment the move counter and update the text component
                        move_counter += 1
                        move_counter_text.setText((instructions['Text_nMoves']) + str(move_counter))
                        # Send LSL marker
                        send_marker('move_' + str(move_counter))
                        # Save data to the PsychoPy data file
                        thisExp.addData('block', block)
                        thisExp.addData('Trial number', trial_index)
                        thisExp.addData('move_counter', move_counter)
                        thisExp.addData('disk1_position', disk_positions['disk1'])
                        thisExp.addData('disk2_position', disk_positions['disk2'])
                        thisExp.addData('disk3_position', disk_positions['disk3'])
                        thisExp.addData('disk4_position', disk_positions['disk4'])
                        thisExp.addData('timer', (timer_task-remaining_time))
                        thisExp.nextEntry()
                    else:
                        # Snap back to original position if move is invalid
                        selected_disk.setPos(tower_positions[disk_positions[selected_disk.name]])
                else:
                    # Snap back to original position if stack is full
                    selected_disk.setPos(tower_positions[disk_positions[selected_disk.name]])

                selected_disk = None
                original_tower = None

        # End the routine if the solution is found
        if disk_positions == disk_target_positions:
            continueRoutine = False
    CodeComponent code_targetdisks
      Code Type = Auto->JS
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      Begin Experiment:
        # Define coordinates for target disk positions
        tower_target_positions = {
            'J1': (-0.25, 0.204), 'J2': (-0.25, 0.222), 'J3': (-0.25, 0.240), 'J4': (-0.25, 0.258),
            'K1': (0, 0.204), 'K2': (0, 0.222), 'K3': (0, 0.240), 'K4': (0, 0.258),
            'L1': (0.25, 0.204), 'L2': (0.25, 0.222), 'L3': (0.25, 0.240), 'L4': (0.25, 0.258),
            'nodisk' : (2, 2)
        }

        # Initialize tower stacks
        tower_target_stacks = {
            'J': [],
            'K': [],
            'L': []
        }
      Begin Routine:
        # Recuperate initial disk positions
        disk_target_positions = {
            'disk1': disk1_target,
            'disk2': disk2_target,
            'disk3': disk3_target,
            'disk4': disk4_target
        }

        # Update tower stacks based on initial positions
        tower_target_stacks = {'J': [], 'K': [], 'L': []}
        for disk, pos_label in disk_target_positions.items():
            pos = tower_target_positions[pos_label]
            if pos[0] == -0.25:
                tower_target_stacks['J'].append(disk)
            elif pos[0] == 0:
                tower_target_stacks['K'].append(disk)
            elif pos[0] == 0.25:
                tower_target_stacks['L'].append(disk)


        # Set disk positions
        disk1target.setPos(tower_target_positions[disk_target_positions['disk1']])
        disk2target.setPos(tower_target_positions[disk_target_positions['disk2']])
        disk3target.setPos(tower_target_positions[disk_target_positions['disk3']])
        disk4target.setPos(tower_target_positions[disk_target_positions['disk4']])
    ImageComponent towers_target
      image = ressources/towers.png
      pos = (0, 0.3)
      size = (0.9, 0.53)
      startVal [time (s)] = 0.0
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    ImageComponent disk1target
      image = ressources/disk1.png
      size = (0.12, 0.018)
      startVal [time (s)] = 0.0
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    ImageComponent disk2target
      image = ressources/disk2.png
      size = (0.09, 0.018)
      startVal [time (s)] = 0.0
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    ImageComponent disk3target
      image = ressources/disk3.png
      size = (0.06, 0.018)
      startVal [time (s)] = 0.0
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    ImageComponent disk4target
      image = ressources/disk4.png
      size = (0.03, 0.018)
      startVal [time (s)] = 0.0
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    PolygonComponent square_target
      fillColor = none
      lineWidth = 2
      pos = (0, 0.3)
      shape = rectangle
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_min_moves
      letterHeight = 0.04
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_min_moves
      Code Type = Auto->JS
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      Begin Routine:
        text_min_moves.setText((instructions['Text_MinMoves']) + str(n_moves))
    TextComponent text_timer
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_timer
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the timer (in seconds)
        timer_task = 90
      Begin Routine:
        # Initialize the timer
        routine_timer = core.Clock()
        routine_timer.reset()
      Each Frame:
        # Calculate remaining time
        remaining_time = timer_task - routine_timer.getTime()

        # Show the timer only if there are 10 seconds or less remaining
        if remaining_time <= 15:
            # Update the timer text
            text_timer.setText(f'{remaining_time:.0f}')
            text_timer.setAutoDraw(True)  # Make sure the timer text is drawn
        else:
            text_timer.setAutoDraw(False)  # Hide the timer text

        # End the routine if time is up
        if remaining_time <= 0:
            continueRoutine = False
    TextComponent move_counter_text
      letterHeight = 0.04
      pos = (0, 0.075)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_start_trial
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('start_trial_' + str(trial))
      End Routine:
        send_marker('end_trial_' + str(trial))
  Routine instructions_global
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    TextComponent InstructionsText1
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    TextComponent InstructionsTowerStart
      letterHeight = 0.03
      pos = (-0.45, -0.2)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    TextComponent InstructionsTowerEnd
      letterHeight = 0.03
      pos = (0.45, -0.2)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1.setText(instructions['Text_instructions'])
    CodeComponent code_InstructionsTowerStart
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for instructions
        InstructionsTowerStart.setText(instructions['Text_tower_start'])
    CodeComponent code_InstructionsTowerEnd
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for instructions
        InstructionsTowerEnd.setText(instructions['Text_tower_end'])
    ImageComponent tower_instruction_start_img
      image = ressources/instruction_tower_start.png
      pos = (-0.45, -0.35)
      size = (0.781, 0.2424)
      startVal [time (s)] = 0.0
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    ImageComponent tower_instruction_end_img
      image = ressources/instruction_tower_end.png
      pos = (0.45, -0.35)
      size = (0.781, 0.2424)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow
      fillColor = white
      ori = 90
      pos = (0, -0.35)
      shape = arrow
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_TOH_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('TOH_start')
    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine instructions_practice
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    TextComponent Instructions_TextPractice
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_Instructions_TextPractice
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        Instructions_TextPractice.setText(instructions['Text_practice'])
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice')
    KeyboardComponent StartPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    TextComponent nametask_2
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine Npuzzle
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    TextComponent TextPuzzle
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_Puzzle
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        TextPuzzle.setText(instructions['Text_puzzle'] + str(trial) + "/22")
  Routine end
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_TOH_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('TOH_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instructions_global
  Routine instructions_practice
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = scenario_TowerOfHanoi.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('trial', 1), ('disk1_init', 'J1'), ('disk2_init', 'J2'), ('disk3_init', 'J3'), ('disk4_init', 'nodisk'), ('disk1_target', 'L1'), ('disk2_target', 'L2'), ('disk3_target', 'L3'), ('disk4_target', 'nodisk'), ('n_moves', 7)]),
      OrderedDict([('block', 'test'), ('trial', 1), ('disk1_init', 'K1'), ('disk2_init', 'J1'), ('disk3_init', 'J2'), ('disk4_init', 'J3'), ('disk1_target', 'K1'), ('disk2_target', 'K2'), ('disk3_target', 'K3'), ('disk4_target', 'K4'), ('n_moves', 7)]),
      OrderedDict([('block', 'test'), ('trial', 2), ('disk1_init', 'L1'), ('disk2_init', 'K1'), ('disk3_init', 'J1'), ('disk4_init', 'L2'), ('disk1_target', 'J1'), ('disk2_target', 'J2'), ('disk3_target', 'L1'), ('disk4_target', 'K1'), ('n_moves', 8)]),
      OrderedDict([('block', 'test'), ('trial', 3), ('disk1_init', 'L1'), ('disk2_init', 'K1'), ('disk3_init', 'K2'), ('disk4_init', 'K3'), ('disk1_target', 'J1'), ('disk2_target', 'J2'), ('disk3_target', 'J3'), ('disk4_target', 'J4'), ('n_moves', 8)]),
      OrderedDict([('block', 'test'), ('trial', 4), ('disk1_init', 'L1'), ('disk2_init', 'L2'), ('disk3_init', 'J1'), ('disk4_init', 'K1'), ('disk1_target', 'J1'), ('disk2_target', 'K1'), ('disk3_target', 'L1'), ('disk4_target', 'L2'), ('n_moves', 9)]),
      OrderedDict([('block', 'test'), ('trial', 5), ('disk1_init', 'L1'), ('disk2_init', 'J1'), ('disk3_init', 'K1'), ('disk4_init', 'K2'), ('disk1_target', 'K1'), ('disk2_target', 'K2'), ('disk3_target', 'K3'), ('disk4_target', 'K4'), ('n_moves', 11)])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
    Routine towertask
  LoopTerminator practice
  Routine startTask
  LoopInitiator test loopType="TrialHandler"
    Selected rows = 1:23
    conditionsFile = scenario_TowerOfHanoi.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Npuzzle
    Routine towertask
  LoopTerminator test
  Routine end
