PsychoPy2experiment version="2024.1.4"
Settings
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = MARS-IB
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    ImageComponent image_main
      image [set every repeat] = $image_file_main
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent opt1
      image [set every repeat] = $image_file_opt1
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent opt2
      image [set every repeat] = $image_file_opt2
      pos = (-0.15, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent opt3
      image [set every repeat] = $image_file_opt3
      pos = (0.15, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent opt4
      image [set every repeat] = $image_file_opt4
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = opt1,opt2,opt3,opt4
      correctAns = correct_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_mouse
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize choice as None
        choice = None

        marker = f"stimulus_{image_file_main}"
        send_marker(marker)
      End Routine:
        # Check which option was clicked and store the choice
        if mouse.isPressedIn(opt1):
            choice = 'opt1'
        elif mouse.isPressedIn(opt2):
            choice = 'opt2'
        elif mouse.isPressedIn(opt3):
            choice = 'opt3'
        elif mouse.isPressedIn(opt4):
            choice = 'opt4'

        # If a choice was made, send the corresponding LSL marker and store the response
        if choice:
            send_marker(choice)  # Function to send the LSL marker
            thisExp.addData('resp_mouse', choice)  # Add the choice to the data file
        else:
            thisExp.addData('resp_mouse', 'no_response')  # Handle case where no choice was made
    CodeComponent code_correct_resp
      Code Type = Auto->JS
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      Begin Routine:
        # Determine which opt is the correct one based on the correct_resp from the CSV
        if correct_resp == image_file_opt1:
            correct_image = opt1
        elif correct_resp == image_file_opt2:
            correct_image = opt2
        elif correct_resp == image_file_opt3:
            correct_image = opt3
        elif correct_resp == image_file_opt4:
            correct_image = opt4
    TextComponent text_timer
      color = black
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_timer
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the timer (in seconds)
        timer_task = 30
      Begin Routine:
        # Initialize the timer
        routine_timer = core.Clock()
        routine_timer.reset()
      Each Frame:
        # Calculate remaining time
        remaining_time = timer_task - routine_timer.getTime()

        # Show the timer only if there are 5 seconds or less remaining
        if remaining_time <= 5:
            # Update the timer text
            text_timer.setText(f'{remaining_time:.0f}')
            text_timer.setAutoDraw(True)  # Make sure the timer text is drawn
        else:
            text_timer.setAutoDraw(False)  # Hide the timer text

        # End the routine if time is up
        if remaining_time <= 0:
            continueRoutine = False
    CodeComponent code_LSL_trial
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{image_file_main}"
        send_marker(marker)
      End Routine:
        answer_corr = f"response_{mouse.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine done
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    TextComponent end_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent LSL_MARS_end
      Code Type = Auto->JS
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      End Routine:
        send_marker('MARS_end')
    CodeComponent code_end_text
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        end_text.setText(instructions['Text_end_task'])
  Routine init
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    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'MATRIX REASONING',
                'Instructions1': (
                    "Welcome to the Matrix Reasoning Task.\n\n"
                    "In this task, you will be shown a 3x3 grid of patterns. The last one, "
                    "in the bottom right-hand corner, will be missing.\n"
                    "You need to select which of the four possible patterns along the bottom fits into the gap."
                ),
                'Instructions2': (
                    "Try to be as fast and as accurate as you can be.\n\n"
                    "If you cannot solve the puzzle, then you should guess - you will not be penalized for an incorrect answer.\n"
                    "The task contains a mix of easy, medium, and hard puzzles.\n"
                    "You will have 30 seconds to complete each puzzle.\n\n"
                    "Press the space bar to begin the practice."
                ),
                'Text_start_task': (
                    "The practice is over. Now we shall begin the real task.\n\n"
                    "Ready?\n\n"
                    "Press the space bar to begin."
                ),
                'Text_pause_between_blocks': "Pause\n\nPress the space bar when you are ready to continue.",
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue."
                )
            }
        else:
            instructions = {
                'name_task' : 'RAISONNEMENT MATRICIEL',
                'Instructions1': (
                    "Bienvenue dans la tâche de raisonnement matriciel.\n\n"
                    "Dans cette tâche, un tableau de motifs 3x3 vous sera présenté. Le dernier, "
                    "dans le coin inférieur droit, sera manquant.\n"
                    "Vous devez sélectionner lequel des quatre motifs possibles en bas correspond à l'emplacement vide."
                ),
                'Instructions2': (
                    "Essayez d'être aussi rapide et précis que possible.\n\n"
                    "Si vous ne pouvez pas résoudre le puzzle, vous devez deviner - vous ne serez pas pénalisé pour une réponse incorrecte.\n"
                    "La tâche contient un mélange de puzzles faciles, moyens et difficiles.\n"
                    "Vous aurez 30 secondes pour compléter chaque puzzle.\n\n"
                    "Appuyez sur la barre d'espace pour commencer l'entraînement."
                ),
                'Text_start_task': (
                    "L'entraînement est terminée. Nous allons maintenant commencer la vraie tâche.\n\n"
                    "Prêt ?\n\n"
                    "Appuyez sur la barre d'espace pour commencer."
                ),
                'Text_pause_between_blocks': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer.",
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer."
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent ActivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=True)
    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('MARS-IB_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()
        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine fixation_cross
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cross
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.2
      text = +
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  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine pause
    RoutineSettingsComponent pause
      disabled = True
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    TextComponent InstructionsText3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine startTask
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    TextComponent InstructionsText2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test_blocks
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine instr2
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    TextComponent instr_text_2
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    KeyboardComponent instr_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instr_text_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        instr_text_2.setText(instructions['Instructions2'])
    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    TextComponent nametask_2
      color = black
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine instr1
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    TextComponent instr_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    KeyboardComponent instr_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instr_text
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        instr_text.setText(instructions['Instructions1'])
    CodeComponent LSL_MARS_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('MARS_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      color = black
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instr1
  Routine instr2
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = MARS-IB_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('image_file_main', 'ressources/mars_3_M_ss1.jpeg'), ('image_file_opt1', 'ressources/mars_3_T1_ss1_pd.jpeg'), ('image_file_opt2', 'ressources/mars_3_T2_ss1_pd.jpeg'), ('image_file_opt3', 'ressources/mars_3_T3_ss1_pd.jpeg'), ('image_file_opt4', 'ressources/mars_3_T4_ss1_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('image_file_main', 'ressources/mars_1_M_ss2.jpeg'), ('image_file_opt1', 'ressources/mars_1_T1_ss2_pd.jpeg'), ('image_file_opt2', 'ressources/mars_1_T2_ss2_pd.jpeg'), ('image_file_opt3', 'ressources/mars_1_T3_ss2_pd.jpeg'), ('image_file_opt4', 'ressources/mars_1_T4_ss2_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('image_file_main', 'ressources/mars_2_M_ss3.jpeg'), ('image_file_opt1', 'ressources/mars_2_T1_ss3_pd.jpeg'), ('image_file_opt2', 'ressources/mars_2_T2_ss3_pd.jpeg'), ('image_file_opt3', 'ressources/mars_2_T3_ss3_pd.jpeg'), ('image_file_opt4', 'ressources/mars_2_T4_ss3_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 1), ('image_file_main', 'ressources/mars_55_M_ss1.jpeg'), ('image_file_opt1', 'ressources/mars_55_T1_ss1_pd.jpeg'), ('image_file_opt2', 'ressources/mars_55_T2_ss1_pd.jpeg'), ('image_file_opt3', 'ressources/mars_55_T3_ss1_pd.jpeg'), ('image_file_opt4', 'ressources/mars_55_T4_ss1_pd.jpeg'), ('correct', None)])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
    Routine fixation_cross
    Routine trial
  LoopTerminator practice
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = MARS-IB_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('image_file_main', 'ressources/mars_3_M_ss1.jpeg'), ('image_file_opt1', 'ressources/mars_3_T1_ss1_pd.jpeg'), ('image_file_opt2', 'ressources/mars_3_T2_ss1_pd.jpeg'), ('image_file_opt3', 'ressources/mars_3_T3_ss1_pd.jpeg'), ('image_file_opt4', 'ressources/mars_3_T4_ss1_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('image_file_main', 'ressources/mars_1_M_ss2.jpeg'), ('image_file_opt1', 'ressources/mars_1_T1_ss2_pd.jpeg'), ('image_file_opt2', 'ressources/mars_1_T2_ss2_pd.jpeg'), ('image_file_opt3', 'ressources/mars_1_T3_ss2_pd.jpeg'), ('image_file_opt4', 'ressources/mars_1_T4_ss2_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('image_file_main', 'ressources/mars_2_M_ss3.jpeg'), ('image_file_opt1', 'ressources/mars_2_T1_ss3_pd.jpeg'), ('image_file_opt2', 'ressources/mars_2_T2_ss3_pd.jpeg'), ('image_file_opt3', 'ressources/mars_2_T3_ss3_pd.jpeg'), ('image_file_opt4', 'ressources/mars_2_T4_ss3_pd.jpeg'), ('correct', None)]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 1), ('image_file_main', 'ressources/mars_55_M_ss1.jpeg'), ('image_file_opt1', 'ressources/mars_55_T1_ss1_pd.jpeg'), ('image_file_opt2', 'ressources/mars_55_T2_ss1_pd.jpeg'), ('image_file_opt3', 'ressources/mars_55_T3_ss1_pd.jpeg'), ('image_file_opt4', 'ressources/mars_55_T4_ss1_pd.jpeg'), ('correct', None)])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
    Routine block_counter
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = MARS-IB_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine fixation_cross
      Routine trial
    LoopTerminator trials
    Routine pause
  LoopTerminator testblocks
  Routine done
