PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Resting_state
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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  Routine init
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    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'RESTING-STATE',
                'Text_instructions': (
                    "Welcome to the Resting-State\n\n\n"
                    "In this, you will be at rest (not performing any task), and will alternate between eyes open and eyes closed\n\n"
                    "Try to relax, refrain from moving, and let your mind wander while staying awake\n\n"
                    "Press the spacebar to start"
                ),
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                )
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'RESTING-STATE',
                'Text_instructions': (
                    "Bienvenue dans la tâche de Resting-State\n\n\n"
                    "Dans celle-ci, vous serez au repos (vous n'effectuerez pas de tâche à proprement parler) et vous alternerez entre les yeux ouverts et les yeux fermés.\n\n"
                    "Essayez de vous détendre, de ne pas bouger et de laisser libre cours à vos pensées tout en restant éveillé.\n\n"
                    "Appuyez sur la barre d'espace pour commencer"
                    ),
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                )
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock
        from psychopy import core

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine instructions1
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    TextComponent InstructionsText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText.setText(instructions['Text_instructions'])
    CodeComponent LSL_RS_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Resting-State_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine Eyes_open
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    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 32
      text = +
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    SoundComponent sound_EO
      sound [set every repeat] = ressources/EO_fr.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent LSL_EO
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("audio_EO")

        # Initialize the clock at the beginning of the routine
        routine_clock = core.Clock()
        routine_clock.reset()

        # Initialize the flag to track if the marker has been sent
        marker_sent = False
      Each Frame:
        # Get the current time elapsed
        elapsed_time = routine_clock.getTime()

        # Check if the elapsed time matches or exceeds 2 seconds and the marker has not been sent yet
        if elapsed_time >= 2.0 and not marker_sent:
            # Send the marker with the stimulus type
            send_marker("EO_begin")
            # Set the flag to True to indicate the marker has been sent
            marker_sent = True
      End Routine:
        send_marker("EO_end")
  Routine Eyes_closed
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    TextComponent text_EC
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 32
      text = Fermez les yeux
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    SoundComponent sound_EC
      sound [set every repeat] = ressources/EC_fr.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent LSL_EC
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("audio_EC")

        # Initialize the clock at the beginning of the routine
        routine_clock = core.Clock()
        routine_clock.reset()

        # Initialize the flag to track if the marker has been sent
        marker_sent = False
      Each Frame:
        # Get the current time elapsed
        elapsed_time = routine_clock.getTime()

        # Check if the elapsed time matches or exceeds 2 seconds and the marker has not been sent yet
        if elapsed_time >= 2.0 and not marker_sent:
            # Send the marker with the stimulus type
            send_marker("EC_begin")
            # Set the flag to True to indicate the marker has been sent
            marker_sent = True
      End Routine:
        send_marker("EC_end")
  Routine end
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    TextComponent InstructionsText_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText_end
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText_end.setText(instructions['Text_end_task'])
    CodeComponent LSL_RS_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('RS_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instructions1
  LoopInitiator loop_RS loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Eyes_closed
    Routine Eyes_open
  LoopTerminator loop_RS
  Routine end
