PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = symbols
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
        import pandas as pd
        from psychopy import logging as psychoLogging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        psychoLogging.console.setLevel(logging.ERROR)
        pd.options.mode.chained_assignment = None  # default='warn'

        # Load the scenario CSV file
        scenario_df = pd.read_csv('coding_scenario.csv')

        # Filter the practice trials for mouse and keyboard
        practice_indices_keyboard = scenario_df.index[(scenario_df['block'] == 'practice_keyboard')].tolist()

        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice_keyboard = f"{practice_indices_keyboard[0]}:{practice_indices_keyboard[-1] + 1}" if practice_indices_keyboard else ""

        # Start clock
        stimulus_clock = core.Clock()
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task': 'CODING',
                'Text_instructions_keyboard': "Welcome to the coding task.\n\nIn this task, your goal is to press the number on the numeric keypad that corresponds to the displayed symbol as quickly as possible.\n\nFirst, we shall have a practice session.\n\nPress the space bar to begin the practice session.",
                'Text_start_task_keyboard': "The practice is finished. Now we shall begin the actual experiment.\n\nReady?\n\nPress the space bar to begin.",
                'Text_pause_between_blocks': "Pause\n\nPress the space bar when you are ready to continue.",
                'Text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue."
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task': 'CODAGE',
                'Text_instructions_keyboard': "Bienvenue dans la tâche de codage.\n\nDans cette tâche, votre objectif est d'appuyer sur le numéro du pavé numérique correspondant au symbole affiché aussi rapidement que possible.\n\nD'abord, nous allons faire une séance d'entraînement.\n\nAppuyez sur la barre d'espace pour commencer la séance d'entraînement.",
                'Text_start_task_keyboard': "L'entraînement est terminé. Nous allons maintenant commencer la tâche réelle.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'Text_pause_between_blocks': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer.",
                'Text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer."
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_Coding_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('coding_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        # Determine the current block type and number

        if block_index >= len(scenario_df[scenario_df['block'] == 'test_keyboard']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocksKeyboard.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
      Each Frame:
        #Visible mouse
        event.Mouse(visible=False)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        if block_type == 'mouse':
            if block_index >= len(scenario_df[scenario_df['block'] == 'test_mouse']['block_n'].unique()):
                # Skip the remaining test blocks
                testblocksMouse.finished = True
                continueRoutine = False
            else:
                block_n = block_index  # block_n in CSV starts from 1

        elif block_type == 'keyboard':
            if block_index >= len(scenario_df[scenario_df['block'] == 'test_keyboard']['block_n'].unique()):
                # Skip the remaining test blocks
                testblocksKeyboard.finished = True
                continueRoutine = False
            else:
                block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("start_block")
      Each Frame:
        #Visible mouse
        event.Mouse(visible=False)
  Routine instructions_keyboard
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    TextComponent InstructionsText1_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = hey
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1_2.setText(instructions['Text_instructions_keyboard'])
    CodeComponent LSL_start_practice_2
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_keyboard')
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    CodeComponent LSL_start_coding
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('coding_start')
  Routine main_keyboard
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    ImageComponent stim_k
      image [set every repeat] = $stimulus
      pos = (0, -0.05)
      size = (0.1, 0.12)
      startVal [frame N] = 0
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    ImageComponent Main_symbols_k
      image [set every repeat] = $grid
      pos = (0, 0.2)
      size = (0.9, 0.24)
      startVal [frame N] = 0
      units = height
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    CodeComponent LSL_stimulus_k
      Code Type = Auto->JS
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      Begin Routine:
        #Visible mouse
        send_marker("stimulus")
      End Routine:
        answer_corr = f"response_{key_resp.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = 0
      storeCorrect = True
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  Routine startTask_keyboard
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    TextComponent InstructionsText2_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2_2.setText(instructions['Text_start_task_keyboard'])
    CodeComponent LSL_start_test_blocks_2
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows_keyboard
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0
        block_type = 'keyboard'
        is_test = True
      Each Frame:
        #Visible mouse
        event.Mouse(visible=False)
  Routine feedback
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    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the response is incorrect
        if key_resp.corr != 1:
            feedback_message = 'X'  # Set the feedback message to a red cross
            feedback_text.color = 'red'  # Set the color to red
        else:
            feedback_message = ''  # No feedback if correct
    TextComponent feedback_text
      letterHeight = 0.06
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $feedback_message
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    ImageComponent Main_symbols_k_feedback
      image [set every repeat] = $grid
      pos = (0, 0.2)
      size = (0.9, 0.24)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = height
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  Routine cross
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    ImageComponent Main_symbols_k_cross
      image [set every repeat] = $grid
      pos = (0, 0.2)
      size = (0.9, 0.24)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
      units = height
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [frame N] = 30
      stopVal [frame N] = 60
      text = +
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Flow
  Routine init
  Routine instructions_keyboard
  LoopInitiator PracticeTrials_keyboard loopType="TrialHandler"
    Selected rows = $selected_rows_practice_keyboard
    conditionsFile = coding_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice_mouse'), ('block_n', 0), ('trial', 1), ('stimulus', 'ressources/number9.png'), ('correct_resp', 'ressources/symbol9_0.png'), ('grid', 'ressources/symbolAndDigit0.png'), ('symbol_1_pos_x', 0.4), ('symbol_2_pos_x', 0.1), ('symbol_3_pos_x', -0.4), ('symbol_4_pos_x', -0.2), ('symbol_5_pos_x', 0.3), ('symbol_6_pos_x', -0.1), ('symbol_7_pos_x', 0.0), ('symbol_8_pos_x', -0.3), ('symbol_9_pos_x', 0.2), ('symbol_1_path', 'ressources/symbol1_0.png'), ('symbol_2_path', 'ressources/symbol2_0.png'), ('symbol_3_path', 'ressources/symbol3_0.png'), ('symbol_4_path', 'ressourc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,
      OrderedDict([('block', 'practice_mouse'), ('block_n', 0), ('trial', 2), ('stimulus', 'ressources/number2.png'), ('correct_resp', 'ressources/symbol2_0.png'), ('grid', 'ressources/symbolAndDigit0.png'), ('symbol_1_pos_x', 0.4), ('symbol_2_pos_x', 0.1), ('symbol_3_pos_x', -0.4), ('symbol_4_pos_x', -0.2), ('symbol_5_pos_x', 0.3), ('symbol_6_pos_x', -0.1), ('symbol_7_pos_x', 0.0), ('symbol_8_pos_x', -0.3), ('symbol_9_pos_x', 0.2), ('symbol_1_path', 'ressources/symbol1_0.png'), ('symbol_2_path', 'ressources/symbol2_0.png'), ('symbol_3_path', 'ressources/symbol3_0.png'), ('symbol_4_path', 'ressource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,
      OrderedDict([('block', 'test_mouse'), ('block_n', 1), ('trial', 1), ('stimulus', 'ressources/number5.png'), ('correct_resp', 5.0), ('grid', 'ressources/symbolAndDigit1.png'), ('symbol_1_pos_x', 0.2), ('symbol_2_pos_x', 0.4), ('symbol_3_pos_x', -0.4), ('symbol_4_pos_x', -0.3), ('symbol_5_pos_x', -0.1), ('symbol_6_pos_x', 0.0), ('symbol_7_pos_x', 0.3), ('symbol_8_pos_x', 0.1), ('symbol_9_pos_x', -0.2), ('symbol_1_path', 'ressources/symbol1_1.png'), ('symbol_2_path', 'ressources/symbol2_1.png'), ('symbol_3_path', 'ressources/symbol3_1.png'), ('symbol_4_path', 'ressources/symbol4_1.png'), ('symbol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,
      OrderedDict([('block', 'test_mouse'), ('block_n', 1), ('trial', 2), ('stimulus', 'ressources/number8.png'), ('correct_resp', 8.0), ('grid', 'ressources/symbolAndDigit1.png'), ('symbol_1_pos_x', 0.2), ('symbol_2_pos_x', 0.4), ('symbol_3_pos_x', -0.4), ('symbol_4_pos_x', -0.3), ('symbol_5_pos_x', -0.1), ('symbol_6_pos_x', 0.0), ('symbol_7_pos_x', 0.3), ('symbol_8_pos_x', 0.1), ('symbol_9_pos_x', -0.2), ('symbol_1_path', 'ressources/symbol1_1.png'), ('symbol_2_path', 'ressources/symbol2_1.png'), ('symbol_3_path', 'ressources/symbol3_1.png'), ('symbol_4_path', 'ressources/symbol4_1.png'), ('symbol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
    Routine cross
    Routine main_keyboard
    Routine feedback
  LoopTerminator PracticeTrials_keyboard
  Routine startTask_keyboard
  LoopInitiator testblocksKeyboard loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test_keyboard') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = coding_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 1), ('stimulus', 'ressources/symbol5_0.png'), ('correct_resp', 'num_5'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 2), ('stimulus', 'ressources/symbol7_0.png'), ('correct_resp', 'num_7'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 3), ('stimulus', 'ressources/symbol9_0.png'), ('correct_resp', 'num_9'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 4), ('stimulus', 'ressources/symbol8_0.png'), ('correct_resp', 'num_8'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 5), ('stimulus', 'ressources/symbol4_0.png'), ('correct_resp', 'num_4'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 6), ('stimulus', 'ressources/symbol1_0.png'), ('correct_resp', 'num_1'), ('grid', 'ressources/symbolAndDigit0.png')]),
      OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 7), ('stimulus', 'ressources/symbol6_0.png'), ('correct_resp', 'num_6'), ('grid', 'ressources/symbolAndDigit0.png')])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
    Routine block_counter
    LoopInitiator testTrialsKeyboard loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test_keyboard') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = coding_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 1), ('stimulus', 'ressources/symbol5_0.png'), ('correct_resp', 'num_5'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 2), ('stimulus', 'ressources/symbol7_0.png'), ('correct_resp', 'num_7'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 3), ('stimulus', 'ressources/symbol9_0.png'), ('correct_resp', 'num_9'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 4), ('stimulus', 'ressources/symbol8_0.png'), ('correct_resp', 'num_8'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 5), ('stimulus', 'ressources/symbol4_0.png'), ('correct_resp', 'num_4'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 6), ('stimulus', 'ressources/symbol1_0.png'), ('correct_resp', 'num_1'), ('grid', 'ressources/symbolAndDigit0.png')]),
        OrderedDict([('block', 'practice_keyboard'), ('block_n', 0), ('trial', 7), ('stimulus', 'ressources/symbol6_0.png'), ('correct_resp', 'num_6'), ('grid', 'ressources/symbolAndDigit0.png')])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
      Routine cross
      Routine main_keyboard
    LoopTerminator testTrialsKeyboard
    Routine pause
  LoopTerminator testblocksKeyboard
  Routine thanks
