PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = DoubleRTT
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine main
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    ImageComponent bgMain
      image = frame.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      units = height
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    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = $isi_frame60hz
      store = first key
      storeCorrect = True
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    ImageComponent arrow
      image [set every repeat] = $stimulus
      size = (0.2, 0.2)
      startVal [frame N] = isi_frame60hz
      units = height
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Each Frame:
        # Check if the current frame matches the isi_frame60hz value
        if frameN == isi_frame60hz:
            # Send the marker with the stimulus type
            send_marker(stimulus)
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine instructions1
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    TextComponent InstructionsText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        InstructionsText1.setText(instructions['Text_instructions'])
    CodeComponent LSL_DoubleRTT_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('DoubleRTT_start')
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_block
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_task")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_DoubleRTT_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('DoubleRTT_end')
    CodeComponent code_InstructionText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      End Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario file
        scenario_df = pd.read_csv('double_rtt_scenario.csv')

        # Get the indices for each block
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()

        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'DOUBLE REACTION TIME',
                'Text_instructions': "Welcome to the Double Reaction Time task.\n\nIn this task your goal is to press the left or arrow key depending of the direction of the arrow presented to you.\n\nThe goal is to be as fast as possible.\nFor this, you will have to use your dominant hand (for example, right hand if you are right-handed).\n\nFirst, we shall have a practice session.\n\nPress the space bar to begin the practice session.",
                'Text_start_task': "Now we shall begin the actual task.\n\nReady?\n\nPress the 'space bar' to begin.",
                'Text_pause_between_blocks': "Pause\n\nPress the 'space bar' when you are ready to continue",
                'Text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'TEMPS DE REACTION DOUBLE',
                'Text_instructions': "Bienvenue dans la tâche de temps de réaction double.\n\nDans cette tâche, votre but est d'appuyer la touche flèche gauche ou flèche droite en fonction de la direction de la flèche qui vous est présentée.\n\nL'objectif est d'être aussi rapide que possible.\nPour cela, vous devrez utiliser votre main dominante (par exemple, la main droite si vous êtes droitier).\n\nD'abord, nous allons faire une session d'entraînement.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement.",
                'Text_start_task': "Nous allons maintenant commencer la tâche.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'Text_pause_between_blocks': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer",
                'Text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
Flow
  Routine init
  Routine instructions1
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = double_rtt_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('trial', 1), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 1.2222), ('isi_frame60hz', 73)]),
      OrderedDict([('block', 'practice'), ('trial', 2), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.4444), ('isi_frame60hz', 87)]),
      OrderedDict([('block', 'practice'), ('trial', 3), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 2.9998), ('isi_frame60hz', 180)]),
      OrderedDict([('block', 'practice'), ('trial', 4), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.2222), ('isi_frame60hz', 73)]),
      OrderedDict([('block', 'practice'), ('trial', 5), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.9998), ('isi_frame60hz', 180)]),
      OrderedDict([('block', 'practice'), ('trial', 6), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.111), ('isi_frame60hz', 127)]),
      OrderedDict([('block', 'practice'), ('trial', 7), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 1.0), ('isi_frame60hz', 60)]),
      OrderedDict([('block', 'practice'), ('trial', 8), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.5554), ('isi_frame60hz', 153)]),
      OrderedDict([('block', 'practice'), ('trial', 9), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.2222), ('isi_frame60hz', 73)]),
      OrderedDict([('block', 'practice'), ('trial', 10), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 2.111), ('isi_frame60hz', 127)])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
    Routine main
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    conditionsFile = double_rtt_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
    random seed = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.7776), ('isi_frame60hz', 166)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.4444), ('isi_frame60hz', 87)]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 1), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.7776), ('isi_frame60hz', 166)]),
      OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 2), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 1.2222), ('isi_frame60hz', 73)]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 29), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.4444), ('isi_frame60hz', 87)]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 30), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.9998), ('isi_frame60hz', 180)])]
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = double_rtt_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.7776), ('isi_frame60hz', 166)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.4444), ('isi_frame60hz', 87)]),
        OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 1), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.7776), ('isi_frame60hz', 166)]),
        OrderedDict([('block', 'test'), ('block_n', 1), ('trial', 2), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 1.2222), ('isi_frame60hz', 73)]),
        OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 29), ('stimulus', 'left_arrow.png'), ('correct_resp', 'left'), ('isi', 1.4444), ('isi_frame60hz', 87)]),
        OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 30), ('stimulus', 'right_arrow.png'), ('correct_resp', 'right'), ('isi', 2.9998), ('isi_frame60hz', 180)])]
      Routine main
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
