PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = simpleRTTmouse
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions1
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    TextComponent InstructionsText1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1.setText(instructions['Text_instructions'])
    CodeComponent LSL_SimpleRTT_mouse_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('SimpleRTT_mouse_start')
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('start_practice_blocks')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
    CodeComponent LSL_start_task
      Code Type = Auto->JS
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      End Routine:
        send_marker('start_test_blocks')
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_SimpleRTT_mouse_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('SimpleRTT_mouse_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        # Set the text for the third set of instructions
        InstructionsText3.text = instructions['Text3']
    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('simpleRTTmouse_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()
        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""

        # Filter the test trials
        testblocks = scenario_df[scenario_df['block'] == 'test']['block_n'].unique().tolist()
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'REACTION TIME (mouse)',
                'Text_instructions': "Welcome to the mouse reaction time task.\n\nIn this task, you will see a square.\nYour goal is to place your mouse in the square.\nThen you have to wait until a circle appears, and click on the circle.\n\nThe goal is to be as fast as possible.\nFor this, you will have to use your dominant hand (for example, right hand if you are right-handed).\n\nFirst, we shall have a practice session.\nClick the space bar to begin.",
                'square_instruction': 'Place your mouse in the square',
                'Text_start_task': "Now we shall begin the actual experiment.\n\nReady?\n\nPress the space bar to begin.",
                'text_pause_between_blocks': "Pause\n\nPress the space bar when you are ready to continue.",
                'text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'REACTION TIME (souris)',
                'Text_instructions': "Bienvenue dans la tâche de temps de réaction à la souris.\n\nDans cette tâche, vous verrez un carré.\nVotre objectif est de placer votre souris dans le carré.\nEnsuite, vous devrez attendre qu'un cercle apparaisse et cliquer sur le cercle.\n\nL'objectif est d'être aussi rapide que possible.\nPour cela, vous devrez utiliser votre main dominante (par exemple, la main droite si vous êtes droitier).\nD'abord, nous allons faire une session d'entraînement.\n\nCliquez sur la barre d'espace pour commencer.",
                'square_instruction': 'Placez votre souris dans le carré',
                'Text_start_task': "Nous allons maintenant commencer la vraie tâche.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'text_pause_between_blocks': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer.",
                'text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent ActivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=True)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine highlight_square
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    PolygonComponent center_square
      fillColor = none
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
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    CodeComponent highlight_logic
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables
        mouse_in_center = False
      Each Frame:
        # Check if mouse is in the center
        if center_square.contains(mouse):
            center_square.lineWidth = 5  # Bold border
            mouse_in_center = True
        else:
            center_square.lineWidth = 1  # Normal border
            mouse_in_center = False

        # End the routine if the mouse is in the center
        if mouse_in_center:
            continueRoutine = False
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine testprint
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Debug print statement
        print(f"Current loop: {current_loop}")
        if current_trial:
            print(f"Current trial data: {current_trial}")
        else:
            print("No current trial data available")
  Routine wait_in_square
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    MouseComponent mouse_square_highlight
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent center_square_highlighted
      fillColor = none
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if block == "practice":
            square_frame60hz = practiceTrials.thisTrial['square_frame60hz']
        else:
            square_frame60hz = testTrials.thisTrial['square_frame60hz']

        # Initialize variables
        mouse_in_center = False
        square_elapsed = 0
      Each Frame:
        # Check if mouse is in the center
        if center_square_highlighted.contains(mouse_square_highlight):
            center_square_highlighted.lineWidth = 5  # Bold border
            mouse_in_center = True
            square_elapsed += 1
            squareinstruction.setText('')

        else:
            center_square_highlighted.lineWidth = 1  # Normal border
            mouse_in_center = False
            square_elapsed = 0  # Reset counter if mouse leaves the square
            if block == "practice":
                squareinstruction.setText(instructions['square_instruction'])
            else:
                squareinstruction.setText('')

        # End the routine if the mouse is in the center for the required time
        if mouse_in_center and square_elapsed >= square_frame60hz:
            continueRoutine = False
    TextComponent squareinstruction
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      units = height
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  Routine pre_stim
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    TextComponent prestim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = $prestim_frame60hz
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  Routine show_circle
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        # Assuming circle_degree is a variable from your conditions file
        # Extract circle_degree value from the trial handler, just like in the other code
        if block == "practice":
            circle_degree = practiceTrials.thisTrial['circle_degree']
        else:
            circle_degree = testTrials.thisTrial['circle_degree']

        marker = f"stimulus_{circle_degree}"
        send_marker(marker)  # Function to send the LSL marker
      End Routine:
        # Send the marker
        send_marker("response")
    MouseComponent mouse_stim
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent circle_logic
      Code Type = Auto->JS
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      Begin Experiment:
        trial_clock = core.Clock()
      Begin Routine:
        import math

        # Extract values for this trial from the trial handler
        if block == "practice":
            circle_degree = practiceTrials.thisTrial['circle_degree']
        else:
            circle_degree = testTrials.thisTrial['circle_degree']

        # Initialize variables
        mouse_in_center = False
        square_elapsed = 0

        # Calculate x, y position based on degree
        distance_from_center = 0.3  # Adjust as needed
        radians = math.radians(circle_degree)
        x_pos = distance_from_center * math.cos(radians)
        y_pos = distance_from_center * math.sin(radians)

        # Set the position of the circle_stim
        circle_stim.pos = (x_pos, y_pos)

        # Initialize the clock
        trial_clock.reset()

        # Show the circle
        circle_stim.setAutoDraw(True)
      Each Frame:
        # End the trial when the circle is clicked
        if mouse_stim.isPressedIn(circle_stim):
            rt = trial_clock.getTime()
            thisExp.addData('response_time', rt)
            thisExp.nextEntry()
            continueRoutine = False
      End Routine:
        # Hide stimuli at the end of the trial
        circle_stim.setAutoDraw(False)
    PolygonComponent circle_stim
      fillColor = white
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instructions1
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = simpleRTTmouse_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.3332), ('prestim_frame60hz', 140), ('circle_degree', 0)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.7776), ('prestim_frame60hz', 167), ('circle_degree', 90)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 1.2222), ('prestim_frame60hz', 73), ('circle_degree', 234)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.111), ('prestim_frame60hz', 127), ('circle_degree', 162)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 5), ('square_sec', 1.2), ('square_frame60hz', 72), ('prestim_sec', 1.8888), ('prestim_frame60hz', 113), ('circle_degree', 36)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 6), ('square_sec', 1.2), ('square_frame60hz', 72), ('prestim_sec', 2.9998), ('prestim_frame60hz', 180), ('circle_degree', 144)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 7), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.5554), ('prestim_frame60hz', 153), ('circle_degree', 198)])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
    Routine wait_in_square
    Routine pre_stim
    Routine show_circle
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = simpleRTTmouse_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.3332), ('prestim_frame60hz', 140), ('circle_degree', 0)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.7776), ('prestim_frame60hz', 167), ('circle_degree', 90)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 1.2222), ('prestim_frame60hz', 73), ('circle_degree', 234)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.111), ('prestim_frame60hz', 127), ('circle_degree', 162)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 5), ('square_sec', 1.2), ('square_frame60hz', 72), ('prestim_sec', 1.8888), ('prestim_frame60hz', 113), ('circle_degree', 36)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 6), ('square_sec', 1.2), ('square_frame60hz', 72), ('prestim_sec', 2.9998), ('prestim_frame60hz', 180), ('circle_degree', 144)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 7), ('square_sec', 0.8), ('square_frame60hz', 48), ('prestim_sec', 2.5554), ('prestim_frame60hz', 153), ('circle_degree', 198)])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = simpleRTTmouse_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine wait_in_square
      Routine pre_stim
      Routine show_circle
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
