PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = symbols
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_Symbols_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('symbols_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        # Set the text for the third set of instructions
        InstructionsText3.text = instructions['Text3']
    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
        import pandas as pd
        from psychopy import logging as psychoLogging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        psychoLogging.console.setLevel(logging.ERROR)
        pd.options.mode.chained_assignment = None  # default='warn'

        # Load the scenario CSV file
        scenario_df = pd.read_csv('symbols_scenario.csv')

        # Filter the practice trials for mouse and keyboard
        practice_indices = scenario_df.index[(scenario_df['block'] == 'practice')].tolist()

        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1] + 1}" if practice_indices else ""

        # Start clock
        stimulus_clock = core.Clock()
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'SYMBOL SEARCH',
                'Text_instructions': "Welcome to the symbol search task.\n\nIn this task, your goal is to determine if either of the displayed symbols on the right is present in the row of six symbols on the right.\n\nPress 'k' if at least one symbol is present (the symbol must be EXACTLY the same, with the same orientation) in the row.\nPress 'd' if neither is present.\n\nFirst, we shall have a practice session.\nPress the space bar to begin.",
                'Text_start_task': "The practice session is finished. Now we shall begin the actual experiment.\n\nReady?\n\nPress the space bar to begin.",
                'Text_pause_between_blocks': "Pause\n\nPress the space bar when you are ready to continue.",
                'Text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'RECHERCHE DE SYMBOLES',
                'Text_instructions': "Bienvenue dans la tâche de recherche de symboles.\n\nDans cette tâche, votre objectif est de déterminer si l'un des symboles affichés à gauche est présent dans la rangée de six symboles à droite.\n\nAppuyez sur 'k' si au moins l'un des deux symboles est présent (le symbole doit être EXACTEMENT le même, avec la même orientation).\n Appuyez sur 'd' si aucun n'est présent.\n\nD'abord, nous allons faire une séance d'entraînement.\nAppuyez sur la barre d'espace pour commencer.",
                'Text_start_task': "L'entraînement est terminé. Nous allons maintenant commencer la vraie tâche.\n\nPrêt·e ?\n\nAppuyez sur la barre d'espace pour commencer.",
                'Text_pause_between_blocks': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer.",
                'Text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("start_block")
  Routine instructions_keyboard
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    TextComponent InstructionsText1_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = hey
      units = height
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    KeyboardComponent startInst_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1_2.setText(instructions['Text_instructions_keyboard'])
    CodeComponent LSL_start_practice_2
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_keyboard')
  Routine main_keyboard
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    ImageComponent stim_k
      image [set every repeat] = $stimulus
      pos = (0, -0.05)
      size = (0.1, 0.12)
      startVal [frame N] = 30
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    ImageComponent Main_symbols_k
      image [set every repeat] = $grid
      pos = (0, 0.2)
      size = (0.9, 0.24)
      startVal [frame N] = 0
      units = height
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    CodeComponent LSL_stimulus_k
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 30:
            send_marker("stimulus")
    KeyboardComponent key_resp
      allowedKeys = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = 30
      storeCorrect = True
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  Routine startTask_keyboard
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    TextComponent InstructionsText2_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent go_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2_2.setText(instructions['Text_start_task_keyboard'])
    CodeComponent LSL_start_test_blocks_2
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows_keyboard
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0
        block_type = 'keyboard'
        is_test = True
  Routine instructions1
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    TextComponent InstructionsText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        InstructionsText1.setText(instructions['Text_instructions'])
    CodeComponent LSL_Symbols_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('symbols_start')
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice')
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test_blocks
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine stimulus
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    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("stimulus_cue")
  Routine symbols
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    ImageComponent stim1
      image [set every repeat] = $stimulus1
      pos = (-0.7, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
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    ImageComponent stim2
      image [set every repeat] = $stimulus2
      pos = (-0.5, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
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    ImageComponent symbol1_img
      image [set every repeat] = $symbol1
      pos [set every repeat] = (-0.1, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
      units = height
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    ImageComponent symbol2_img
      image [set every repeat] = $symbol2
      pos [set every repeat] = (0.1, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
      units = height
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    ImageComponent symbol3_img
      image [set every repeat] = $symbol3
      pos [set every repeat] = (0.3, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
      units = height
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    ImageComponent symbol4_img
      image [set every repeat] = $symbol4
      pos [set every repeat] = (0.5, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
      units = height
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    ImageComponent symbol5_img
      image [set every repeat] = $symbol5
      pos [set every repeat] = (0.7, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0
      units = height
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    PolygonComponent polygon_2
      lineWidth = 2
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.5, 0.2)
      startVal [time (s)] = 0
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    CodeComponent LSL_stimulus_2
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_trial_{trial}"
        send_marker(marker)
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
    KeyboardComponent response
      allowedKeys = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine pre_stim
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    TextComponent nothing
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [frame N] = 30
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    TextComponent text_cross
      letterHeight = 0.05
      pos = (-0.6, 0)
      startVal [frame N] = 30
      stopVal [frame N] = 60
      text = +
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    PolygonComponent polygon
      lineWidth = 2
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.5, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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Flow
  Routine init
  Routine instructions1
  LoopInitiator practiceTrials loopType="TrialHandler"
    Selected rows = $selected_rows_practice
    conditionsFile = symbols_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('stimulus1', 'ressources/symbol_57.png'), ('stimulus2', 'ressources/symbol_24.png'), ('correct_resp', 'd'), ('symbol0', 'ressources/symbol_76.png'), ('symbol1', 'ressources/symbol_67.png'), ('symbol2', 'ressources/symbol_44.png'), ('symbol3', 'ressources/symbol_58.png'), ('symbol4', 'ressources/symbol_08.png'), ('symbol5', 'ressources/symbol_13.png'), ('symbol6', 'ressources/symbol_21.png'), ('symbol7', 'ressources/symbol_32.png')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('stimulus1', 'ressources/symbol_35.png'), ('stimulus2', 'ressources/symbol_11.png'), ('correct_resp', 'd'), ('symbol0', 'ressources/symbol_12.png'), ('symbol1', 'ressources/symbol_67.png'), ('symbol2', 'ressources/symbol_01.png'), ('symbol3', 'ressources/symbol_52.png'), ('symbol4', 'ressources/symbol_38.png'), ('symbol5', 'ressources/symbol_42.png'), ('symbol6', 'ressources/symbol_78.png'), ('symbol7', 'ressources/symbol_23.png')]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 1), ('stimulus1', 'ressources/symbol_28.png'), ('stimulus2', 'ressources/symbol_12.png'), ('correct_resp', 'k'), ('symbol0', 'ressources/symbol_54.png'), ('symbol1', 'ressources/symbol_65.png'), ('symbol2', 'ressources/symbol_32.png'), ('symbol3', 'ressources/symbol_25.png'), ('symbol4', 'ressources/symbol_46.png'), ('symbol5', 'ressources/symbol_12.png'), ('symbol6', 'ressources/symbol_06.png'), ('symbol7', 'ressources/symbol_74.png')]),
      OrderedDict([('block', 'test'), ('block_n', 2), ('trial', 2), ('stimulus1', 'ressources/symbol_53.png'), ('stimulus2', 'ressources/symbol_78.png'), ('correct_resp', 'd'), ('symbol0', 'ressources/symbol_73.png'), ('symbol1', 'ressources/symbol_68.png'), ('symbol2', 'ressources/symbol_17.png'), ('symbol3', 'ressources/symbol_02.png'), ('symbol4', 'ressources/symbol_34.png'), ('symbol5', 'ressources/symbol_55.png'), ('symbol6', 'ressources/symbol_42.png'), ('symbol7', 'ressources/symbol_24.png')])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
    Routine pre_stim
    Routine symbols
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = symbols_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 1), ('stimulus1', 'ressources/symbol_08.png'), ('stimulus2', 'ressources/symbol_17.png'), ('correct_resp', 'k'), ('symbol1', 'ressources/symbol_44.png'), ('symbol2', 'ressources/symbol_58.png'), ('symbol3', 'ressources/symbol_24.png'), ('symbol4', 'ressources/symbol_08.png'), ('symbol5', 'ressources/symbol_64.png')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 2), ('stimulus1', 'ressources/symbol_48.png'), ('stimulus2', 'ressources/symbol_55.png'), ('correct_resp', 'k'), ('symbol1', 'ressources/symbol_48.png'), ('symbol2', 'ressources/symbol_07.png'), ('symbol3', 'ressources/symbol_68.png'), ('symbol4', 'ressources/symbol_57.png'), ('symbol5', 'ressources/symbol_78.png')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 3), ('stimulus1', 'ressources/symbol_35.png'), ('stimulus2', 'ressources/symbol_52.png'), ('correct_resp', 'd'), ('symbol1', 'ressources/symbol_12.png'), ('symbol2', 'ressources/symbol_28.png'), ('symbol3', 'ressources/symbol_74.png'), ('symbol4', 'ressources/symbol_63.png'), ('symbol5', 'ressources/symbol_55.png')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('trial', 4), ('stimulus1', 'ressources/symbol_61.png'), ('stimulus2', 'ressources/symbol_02.png'), ('correct_resp', 'd'), ('symbol1', 'ressources/symbol_63.png'), ('symbol2', 'ressources/symbol_34.png'), ('symbol3', 'ressources/symbol_78.png'), ('symbol4', 'ressources/symbol_57.png'), ('symbol5', 'ressources/symbol_25.png')])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = symbols_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine pre_stim
      Routine symbols
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
