PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = CategorySwitch
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        # Load the scenario file
        scenario_df = pd.read_csv('category_switch_task_scenario.csv')
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'CATEGORY SWITCH',
                'Introduction': "Welcome to the 'Category Switch' task.\n\nIn this task, you will see one of several words, appearing one at a time.\n\nSometimes you will be asked to respond to whether the word represents a LIVING BEING or not; at other times, you will be asked to respond to whether the object described by the word is LARGER or SMALLER than a basketball.",
                'Practice_Living_Only': "If you see a heart on the screen, you will be asked to respond to whether the word represents a LIVING BEING or not.\n\nIf the word represents a LIVING BEING, press the 'k' key.\nIf the word does NOT represent a living being, press the 'd' key.\n\nPress the space bar to begin the practice session for living beings only.",
                'Practice_Size_Only': "If you see an arrowcross on the screen, you will be asked to respond to the SIZE of the object described by the word.\n\nIf the object is LARGER than a basketball, press the 'k' key.\nIf the object is SMALLER than a basketball, press the 'd' key.\n\nPress the space bar to begin the practice session for size only.",
                'Practice_Both': "You will now practice responding to both LIVING/NON-LIVING and SIZE categories.\n\nPay attention to the cues and respond to the words as quickly as possible without making too many errors.\n\nPress the space bar to begin the practice session.",
                'Start_Actual_Task': "The training is over. Let's now do the reak task.\n\nThis consists of 4 rounds. Each round lasts about 2 minutes.\n\nPress the space bar to start.",
                'Pause': "Pause\n\nPress the space bar when you are ready to continue",
                'text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'CATEGORY SWITCH',
                'Introduction': "Bienvenu dans la tâche de 'Category Switch'.\n\nDans cette tâche, vous verrez un mot parmi plusieurs, apparaissant un à la fois.\n\nParfois, on vous demandera de répondre à la question de savoir si le mot représente un ÊTRE VIVANT ou non ; à d'autres moments, on vous demandera de répondre à la question de savoir si l'objet décrit par le mot est PLUS GRAND ou PLUS PETIT qu'un ballon de basket.",
                'Practice_Living_Only': "Si vous voyez un cœur à l'écran, il vous sera demandé de répondre à la question de savoir si le mot représente un ÊTRE VIVANT ou non.\n\nSi le mot représente un ÊTRE VIVANT, appuyez sur la touche 'k'.\nSi le mot NE représente PAS un être vivant, appuyez sur la touche 'd'.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement pour les êtres vivants uniquement.",
                'Practice_Size_Only': "Si vous voyez un croix flèchée à l'écran, il vous sera demandé de répondre à la question de la TAILLE de l'objet décrit par le mot.\n\nSi l'objet est PLUS GRAND qu'un ballon de basket, appuyez sur la touche 'k'.\nSi l'objet est PLUS PETIT qu'un ballon de basket, appuyez sur la touche 'd'.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement pour la taille uniquement.",
                'Practice_Both': "Vous allez maintenant vous entraîner à répondre à la fois aux catégories VIVANT/NON-VIVANT et TAILLE.\n\nFaites attention aux indices et répondez aux mots aussi vite que possible sans faire trop d'erreurs.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement.",
                'Start_Actual_Task': "L'entraînement est terminé. Passons à la vraie tâche\n\nCette dernière se déroulera sur 4 tours. Chaque tour durera environ 2 minutes.\n\nAppuyez sur la barre d'espace pour commencer.",
                'Pause': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer",
                'text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine startTask
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    TextComponent instruction_text_component_start_task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent start_Task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsStartTask
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_start_task.text = instructions['Start_Actual_Task']
    CodeComponent LSL_start_task
      Code Type = Auto->JS
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      End Routine:
        send_marker("block")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_CategorySwitch_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('CategorySwitch_end')
    CodeComponent code_InstructionThanks
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent instruction_text_component_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent Unpause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsPause
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_pause.text = instructions['Pause']
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine instructions_color
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    TextComponent instruction_text_component_practice_living
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent startLiving
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsLiving
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_living.text = instructions['Practice_Living_Only']
    CodeComponent LSL_start_practice_L
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_L')
  Routine instructions_shape
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    TextComponent instruction_text_component_practice_size
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = test
      units = height
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    KeyboardComponent startSize
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsSize
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_size.text = instructions['Practice_Size_Only']
    CodeComponent LSL_start_practice_S
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_S')
  Routine instructions_both
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    TextComponent instruction_text_component_practice_both
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent startBoth
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsBoth
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_both.text = instructions['Practice_Both']
    CodeComponent LSL_start_practice_both
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_CS')
  Routine feedback
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    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if not response_practice.corr:  # Check if the response is incorrect
            feedback_message = 'X'  # Set the feedback message to a red cross
            feedback_text.color = 'red'  # Set the color to red
            #send_marker("0_" + instruction + "_" + trial_type + "_" + word_eng)
            #print("0_" + instruction + "_" + trial_type + "_" + word_eng)
        else:
            feedback_message = ''  # No feedback if correct
            #send_marker("1_" + instruction + "_" + trial_type + "_" + word_eng)
            #print("1_" + instruction + "_" + trial_type + "_" + word_eng)
    TextComponent feedback_text
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $feedback_message
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    TextComponent instruction_d_2
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    TextComponent instruction_k_2
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    CodeComponent code_instruction_text_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        if language == "English":
            if current_block_type == 'living':
                instruction_d_2.text = 'd\nnot living'
                instruction_k_2.text = 'k\nliving'
            elif current_block_type == 'size':
                instruction_d_2.text = 'd\nsmaller than a basketball'
                instruction_k_2.text = 'k\nbigger than a basketball'
            elif current_block_type == 'both':
                instruction_d_2.text = 'd\nnot living\nsmaller than a basketball'
                instruction_k_2.text = 'k\nliving\nbigger than a basketball'
        else:
            if current_block_type == 'living':
                instruction_d_2.text = 'd\nnon vivant'
                instruction_k_2.text = 'k\nvivant'
            elif current_block_type == 'size':
                instruction_d_2.text = 'd\nplus petit que balle de basket'
                instruction_k_2.text = 'k\nplus grand que balle de basket'
            elif current_block_type == 'both':
                instruction_d.text = 'd\nnon vivant\nplus petit que balle de basket'
                instruction_k.text = 'k\nvivant\nplus grand que balle de basket'
  Routine instruction_global
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    TextComponent instruction_text_component_introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent end_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_Instructions
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_introduction.text = instructions['Introduction']
    CodeComponent LSL_CS_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('CategorySwitch_start')
    CodeComponent code_block_variable
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_practice = True
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine block_counter_practice
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    CodeComponent blockSetup_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'practice'
        if block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            # Skip the remaining test blocks
            practiceblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_block_practice")
  Routine instructions_practice
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    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_block')
    CodeComponent code_InstructionsPractice
      Code Type = Auto->JS
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      Begin Routine:
        # Extract block_type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        # Set the instruction text based on the block type
        if current_block_type == 'living':
            text_practice.text = instructions['Practice_Living_Only']
        elif current_block_type == 'size':
            text_practice.text = instructions['Practice_Size_Only']
        elif current_block_type == 'both':
            text_practice.text = instructions['Practice_Both']
    KeyboardComponent startPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_practice
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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  Routine trial_practice
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    KeyboardComponent response_practice
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = $iti_60hz+soa_60hz
      store = first key
      storeCorrect = True
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    TextComponent ITI_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = $iti_60hz
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    TextComponent instruction_text_component_practice
      letterHeight = 0.10
      startVal [frame N] = $iti_60hz+soa_60hz
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    ImageComponent stimulus_image_practice
      contrast = -1
      image [set every repeat] = $stimulus
      pos = (0, 0.15)
      size = (0.12, 0.12)
      startVal [frame N] = $iti_60hz
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    CodeComponent code_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        if language == "English":
            if current_block_type == 'living':
                instruction_text_component_practice.text = word_eng
                instruction_d.text = 'd\nnot living'
                instruction_k.text = 'k\nliving'
            elif current_block_type == 'size':
                instruction_text_component_practice.text = word_eng
                instruction_d.text = 'd\nsmaller than a basketball'
                instruction_k.text = 'k\nbigger than a basketball'
            elif current_block_type == 'both':
                instruction_text_component_practice.text = word_eng
                instruction_d.text = 'd\nnot living\nsmaller than a basketball'
                instruction_k.text = 'k\nliving\nbigger than a basketball'
        else:
            if current_block_type == 'living':
                instruction_text_component_practice.text = word_fr
                instruction_d.text = 'd\nnon vivant'
                instruction_k.text = 'k\nvivant'
            elif current_block_type == 'size':
                instruction_text_component_practice.text = word_fr
                instruction_d.text = 'd\nplus petit que balle de basket'
                instruction_k.text = 'k\nplus grand que balle de basket'
            elif current_block_type == 'both':
                instruction_text_component_practice.text = word_fr
                instruction_d.text = 'd\nnon vivant\nplus petit que balle de basket'
                instruction_k.text = 'k\nvivant\nplus grand que balle de basket'
    TextComponent instruction_d
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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    TextComponent instruction_k
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_stimulus_practice
      Code Type = Auto->JS
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      Each Frame:
        # Check if the current frame matches the isi_frame60hz value
        if frameN == iti_60hz+soa_60hz:
            # Send the marker with the stimulus type
            send_marker(instruction + "_" + trial_type + "_" + word_eng)
            print(instruction + "_" + trial_type + "_" + word_eng)
    CodeComponent LSL_response_practice
      Code Type = Auto->JS
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      End Routine:
        if not response_practice.corr:  # Check if the response is incorrect
            send_marker("0_" + instruction + "_" + trial_type + "_" + word_eng)
        else:
            send_marker("1_" + instruction + "_" + trial_type + "_" + word_eng)
  Routine increment_block_practice
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    CodeComponent check_block_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            practiceblocks.finished = True  # Skip the loop
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine trial_test
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = $iti_60hz+soa_60hz
      store = first key
      storeCorrect = True
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    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = $iti_60hz
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    TextComponent instruction_text_component
      letterHeight = 0.10
      startVal [frame N] = $iti_60hz+soa_60hz
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    ImageComponent stimulus_image
      image [set every repeat] = $stimulus
      pos = (0, 0.15)
      size = (0.12, 0.12)
      startVal [frame N] = $iti_60hz
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    CodeComponent code_instruction_text_3
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Set the instruction text based on the language
        if language == "English":
            instruction_text_component.text = word_eng
        else:
            instruction_text_component.text = word_fr
    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Each Frame:
        # Check if the current frame matches the isi_frame60hz value
        if frameN == iti_60hz+soa_60hz:
            # Send the marker with the stimulus type
            send_marker("stimulus_" + instruction + "_" + trial_type + "_" + stimulus)
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine feedback_test
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    CodeComponent set_feedback_test
      Code Type = Auto->JS
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      Begin Routine:
        if not response_practice.corr:  # Check if the response is incorrect
            feedback_message = ''  # Set the feedback message to a red cross
        else:
            feedback_message = ''  # No feedback if correct
    TextComponent feedback_text_test
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $feedback_message
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Flow
  Routine init
  Routine instruction_global
  LoopInitiator practiceblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = category_switch_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'living'), ('trial', 1), ('instruction', 'living'), ('word_fr', 'canapé'), ('word_eng', 'sofa'), ('trial_type', 'undefined'), ('stimulus', 'images/heart.png'), ('correct_resp', 'd'), ('iti', 0.668), ('soa', 0.53), ('iti_60hz', 40), ('soa_60hz', 32)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'living'), ('trial', 2), ('instruction', 'living'), ('word_fr', 'éléphant'), ('word_eng', 'elephant'), ('trial_type', 'repeat'), ('stimulus', 'images/heart.png'), ('correct_resp', 'k'), ('iti', 0.519), ('soa', 0.516), ('iti_60hz', 31), ('soa_60hz', 31)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'size'), ('trial', 1), ('instruction', 'size'), ('word_fr', 'tasse'), ('word_eng', 'cup'), ('trial_type', 'undefined'), ('stimulus', 'images/arrowcross.png'), ('correct_resp', 'd'), ('iti', 0.692), ('soa', 0.457), ('iti_60hz', 42), ('soa_60hz', 27)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'size'), ('trial', 2), ('instruction', 'size'), ('word_fr', 'éléphant'), ('word_eng', 'elephant'), ('trial_type', 'repeat'), ('stimulus', 'images/arrowcross.png'), ('correct_resp', 'k'), ('iti', 0.682), ('soa', 0.593), ('iti_60hz', 41), ('soa_60hz', 36)])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
    Routine block_counter_practice
    Routine instructions_practice
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = category_switch_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'living'), ('trial', 1), ('instruction', 'living'), ('word_fr', 'canapé'), ('word_eng', 'sofa'), ('trial_type', 'undefined'), ('stimulus', 'images/heart.png'), ('correct_resp', 'd'), ('iti', 0.668), ('soa', 0.53), ('iti_60hz', 40), ('soa_60hz', 32)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'living'), ('trial', 2), ('instruction', 'living'), ('word_fr', 'éléphant'), ('word_eng', 'elephant'), ('trial_type', 'repeat'), ('stimulus', 'images/heart.png'), ('correct_resp', 'k'), ('iti', 0.519), ('soa', 0.516), ('iti_60hz', 31), ('soa_60hz', 31)]),
        OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'size'), ('trial', 1), ('instruction', 'size'), ('word_fr', 'tasse'), ('word_eng', 'cup'), ('trial_type', 'undefined'), ('stimulus', 'images/arrowcross.png'), ('correct_resp', 'd'), ('iti', 0.692), ('soa', 0.457), ('iti_60hz', 42), ('soa_60hz', 27)]),
        OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'size'), ('trial', 2), ('instruction', 'size'), ('word_fr', 'éléphant'), ('word_eng', 'elephant'), ('trial_type', 'repeat'), ('stimulus', 'images/arrowcross.png'), ('correct_resp', 'k'), ('iti', 0.682), ('soa', 0.593), ('iti_60hz', 41), ('soa_60hz', 36)])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
      Routine trial_practice
      Routine feedback
    LoopTerminator practiceTrials
    Routine increment_block_practice
  LoopTerminator practiceblocks
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = category_switch_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = category_switch_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial_test
      Routine feedback_test
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
