PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = ColorShape
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine startTask
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    TextComponent instruction_text_component_start_task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent start_Task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsStartTask
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_start_task.text = instructions['Start_Actual_Task']
    CodeComponent LSL_start_task
      Code Type = Auto->JS
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      End Routine:
        send_marker("block")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_ColorShape_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('ColorShape_end')
    CodeComponent code_InstructionThanks
      Code Type = Auto->JS
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      Begin Experiment:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent instruction_text_component_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent Unpause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsPause
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_pause.text = instructions['Pause']
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        # Load the scenario file
        scenario_df = pd.read_csv('color_shape_task_scenario.csv')
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'COLOR-SHAPE',
                'Introduction': "Welcome to the 'COLOR-SHAPE' task.\n\nIn this task, you will see one of four stimuli (green circle, green triangle, red circle, red triangle), appearing one at a time.\n\nSometimes you will be asked to respond to the COLOR; at other times, you will be asked to respond to the SHAPE of the stimulus.",
                'Practice_Color_Only': "If you see a 'C' on the screen, you will be asked to respond to the COLOR of the stimulus that appears.\n\nIf it is GREEN, press the 'd' key.\nIf it is RED, press the 'k' key.\n\nPress the space bar to begin the practice session for color only.",
                'Practice_Shape_Only': "If you see a 'S' on the screen, you will be asked to respond to the SHAPE of the stimulus that appears.\n\nIf it is a CIRCLE, press the 'd' key.\nIf it is a TRIANGLE, press the 'k' key.\n\nPress the space bar to begin the practice session for shape only.",
                'Practice_Both': "You will now practice responding to both SHAPE and COLOR.\n\nPay attention to the cues and respond to the objects as quickly as possible without making too many errors.\n\nPress the space bar to begin the practice session.",
                'Start_Actual_Task': "The training is over. Let's start the real task.\n\nThe actual task consists of 4 rounds. Each round lasts about 2 minutes.\n\nPress the space bar to start.",
                'Pause': "Pause\n\nPress the space bar when you are ready to continue",
                'text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'COLOR-SHAPE',
                'Introduction': "Bienvenue dans la tâche 'COLOR-SHAPE'.\n\nDans cette tâche, vous verrez un stimulus parmi quatre (cercle vert, triangle vert, cercle rouge, triangle rouge), apparaissant un à la fois.\n\nParfois, on vous demandera de répondre selon la COULEUR; à d'autres moments, on vous demandera de répondre selon la FORME du stimulus.",
                'Practice_Color_Only': "Si vous voyez un 'C' à l'écran, il vous sera demandé de répondre à la COULEUR du stimulus qui apparaîtra.\n\nSi l'objet est VERT, appuyez sur la touche 'd'.\nSi l'objet est ROUGE, appuyez sur la touche 'k'.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement pour la couleur uniquement.",
                'Practice_Shape_Only': "Si vous voyez un 'F' à l'écran, il vous sera demandé de répondre à la FORME du stimulus qui apparaîtra.\n\nSi l'objet est un CERCLE, appuyez sur la touche 'd'.\nSi l'objet est un TRIANGLE, appuyez sur la touche 'k'.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement pour la forme uniquement.",
                'Practice_Both': "Vous allez maintenant vous entraîner à répondre à la fois à la FORME et à la COULEUR.\n\nFaites attention aux indices et répondez aux stimuli aussi vite que possible sans faire trop d'erreurs.\n\nAppuyez sur la barre d'espace pour commencer la session d'entraînement.",
                'Start_Actual_Task': "L'entrainement est terminé. Passons maintenant à la vraie tâche.\n\nCette dernière se composera de 4 tours. Chaque tour durera environ 2 minutes.\n\nAppuyez sur la barre d'espace pour commencer.",
                'Pause': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer",
                'text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine instructions_color
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    TextComponent instruction_text_component_practice_color
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent startColor
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsColor
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_color.text = instructions['Practice_Color_Only']
    CodeComponent LSL_start_practice_C
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_C')
  Routine instructions_shape
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    TextComponent instruction_text_component_practice_shape
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = test
      units = height
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    KeyboardComponent startShape
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsShape
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_shape.text = instructions['Practice_Shape_Only']
    CodeComponent LSL_start_practice_S
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_S')
  Routine instructions_both
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    TextComponent instruction_text_component_practice_both
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent startBoth
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsBoth
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_practice_both.text = instructions['Practice_Both']
    CodeComponent LSL_start_practice_both
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_CS')
  Routine feedback
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    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if not response_practice.corr:  # Check if the response is incorrect
            feedback_message = 'X'  # Set the feedback message to a red cross
            feedback_text.color = 'red'  # Set the color to red
        else:
            feedback_message = ''  # No feedback if correct
    TextComponent feedback_text
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $feedback_message
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    TextComponent instruction_d_2
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    TextComponent instruction_k_2
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    CodeComponent code_instruction_text_2
      Code Type = Auto->JS
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      Begin Routine:
        # Determine the block type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        if language == "English":
            if current_block_type == 'color':
                instruction_d_2.text = 'd\ngreen'
                instruction_k_2.text = 'k\nred'
            elif current_block_type == 'shape':
                instruction_d_2.text = 'd\ncircle'
                instruction_k_2.text = 'k\ntriangle'
            elif current_block_type == 'both':
                instruction_d_2.text = 'd\ngreen\ncircle'
                instruction_k_2.text = 'k\nred\ntriangle'
        else:
            if current_block_type == 'color':
                instruction_d_2.text = 'd\nvert'
                instruction_k_2.text = 'k\nrouge'
            elif current_block_type == 'shape':
                instruction_d_2.text = 'd\ncercle'
                instruction_k_2.text = 'k\ntriangle'
            elif current_block_type == 'both':
                instruction_d_2.text = 'd\nvert\ncercle'
                instruction_k_2.text = 'k\nrouge\ntriangle'
  Routine instruction_global
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    TextComponent instruction_text_component_introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent end_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_Instructions
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_introduction.text = instructions['Introduction']
    CodeComponent LSL_CS_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('ColorShape_start')
    CodeComponent code_block_variable
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_practice = True
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine instructions_practice
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    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_block')
    CodeComponent code_InstructionsPractice
      Code Type = Auto->JS
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      Begin Routine:
        # Extract block_type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        # Set the instruction text based on the block type
        if current_block_type == 'color':
            text_practice.text = instructions['Practice_Color_Only']
        elif current_block_type == 'shape':
            text_practice.text = instructions['Practice_Shape_Only']
        elif current_block_type == 'both':
            text_practice.text = instructions['Practice_Both']
    KeyboardComponent startPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_practice
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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  Routine increment_block_practice
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    CodeComponent check_block_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            practiceblocks.finished = True  # Skip the loop
  Routine block_counter_practice
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    CodeComponent blockSetup_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            # Skip the remaining test blocks
            practiceblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_block_practice")
  Routine trial_practice
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    KeyboardComponent response_practice
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = $iti_60hz+soa_60hz
      store = first key
      storeCorrect = True
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    TextComponent ITI_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = $iti_60hz
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    TextComponent instruction_text_component_practice
      letterHeight = 0.10
      pos = (0, 0.35)
      startVal [frame N] = $iti_60hz
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    ImageComponent stimulus_image_practice
      image [set every repeat] = $stimulus
      size = (0.3, 0.3)
      startVal [frame N] = $iti_60hz+soa_60hz
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    CodeComponent code_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Determine the block type for the current block
        current_block_type = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_type'].values[0]

        if language == "English":
            if current_block_type == 'color':
                instruction_text_component_practice.text = instruction_eng
                instruction_d.text = 'd\ngreen'
                instruction_k.text = 'k\nred'
            elif current_block_type == 'shape':
                instruction_text_component_practice.text = instruction_eng
                instruction_d.text = 'd\ncircle'
                instruction_k.text = 'k\ntriangle'
            elif current_block_type == 'both':
                instruction_text_component_practice.text = instruction_eng
                instruction_d.text = 'd\ngreen\ncircle'
                instruction_k.text = 'k\nred\ntriangle'
        else:
            if current_block_type == 'color':
                instruction_text_component_practice.text = instruction_fr
                instruction_d.text = 'd\nvert'
                instruction_k.text = 'k\nrouge'
            elif current_block_type == 'shape':
                instruction_text_component_practice.text = instruction_fr
                instruction_d.text = 'd\ncercle'
                instruction_k.text = 'k\ntriangle'
            elif current_block_type == 'both':
                instruction_text_component_practice.text = instruction_fr
                instruction_d.text = 'd\nvert\ncercle'
                instruction_k.text = 'k\nrouge\ntriangle'
    TextComponent instruction_d
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
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    TextComponent instruction_k
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_stimulus_practice
      Code Type = Auto->JS
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      Each Frame:
        # Check if the current frame matches the isi_frame60hz value
        if frameN == iti_60hz+soa_60hz:
            # Send the marker with the stimulus type
            send_marker("stimulus_" + instruction + "_" + trial_type + "_" + stimulus)
      End Routine:
        answer_corr = f"response_{response_practice.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine trial_test
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'd','k'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [frame N] = $iti_60hz+soa_60hz
      store = first key
      storeCorrect = True
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    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = $iti_60hz
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    TextComponent instruction_text_component
      letterHeight = 0.10
      pos = (0, 0.35)
      startVal [frame N] = $iti_60hz
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    ImageComponent stimulus_image
      image [set every repeat] = $stimulus
      size = (0.3, 0.3)
      startVal [frame N] = $iti_60hz+soa_60hz
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Set the instruction text based on the language
        if language == "English":
            instruction_text_component.text = instruction_eng
        else:
            instruction_text_component.text = instruction_fr
    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Each Frame:
        # Check if the current frame matches the isi_frame60hz value
        if frameN == iti_60hz+soa_60hz:
            # Send the marker with the stimulus type
            send_marker("stimulus_" + instruction + "_" + trial_type + "_" + stimulus)
      End Routine:
        answer_corr = f"response_{response.corr}"
        send_marker(answer_corr)  # Function to send the LSL marker
  Routine feedback_test
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    CodeComponent set_feedback_test
      Code Type = Auto->JS
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      Begin Routine:
        if not response.corr:  # Check if the response is incorrect
            feedback_message = ''  # No feedback (test trials)
        else:
            feedback_message = ''  # No feedback if correct
    TextComponent feedback_text_test
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $feedback_message
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Flow
  Routine init
  Routine instruction_global
  LoopInitiator practiceblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = color_shape_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 1), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/greentriangle.png'), ('correct_resp', 'd'), ('iti', 0.545), ('soa', 0.464), ('iti_60hz', 33), ('soa_60hz', 28)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 2), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/redcircle.png'), ('correct_resp', 'k'), ('iti', 0.615), ('soa', 0.442), ('iti_60hz', 37), ('soa_60hz', 27)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'shape'), ('trial', 1), ('instruction', 'shape'), ('instruction_fr', 'F'), ('instruction_eng', 'S'), ('trial_type', 'switch'), ('stimulus', 'images/redtriangle.png'), ('correct_resp', 'k'), ('iti', 0.625), ('soa', 0.448), ('iti_60hz', 38), ('soa_60hz', 27)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'shape'), ('trial', 2), ('instruction', 'shape'), ('instruction_fr', 'F'), ('instruction_eng', 'S'), ('trial_type', 'repeat'), ('stimulus', 'images/greencircle.png'), ('correct_resp', 'd'), ('iti', 0.538), ('soa', 0.506), ('iti_60hz', 32), ('soa_60hz', 30)])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
    Routine block_counter_practice
    Routine instructions_practice
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = color_shape_task_scenario.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 1), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/greentriangle.png'), ('correct_resp', 'd'), ('iti', 0.545), ('soa', 0.464), ('iti_60hz', 33), ('soa_60hz', 28)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 2), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/redcircle.png'), ('correct_resp', 'k'), ('iti', 0.615), ('soa', 0.442), ('iti_60hz', 37), ('soa_60hz', 27)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 3), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'repeat'), ('stimulus', 'images/greentriangle.png'), ('correct_resp', 'd'), ('iti', 0.695), ('soa', 0.471), ('iti_60hz', 42), ('soa_60hz', 28)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 4), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'repeat'), ('stimulus', 'images/greencircle.png'), ('correct_resp', 'd'), ('iti', 0.605), ('soa', 0.561), ('iti_60hz', 36), ('soa_60hz', 34)])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
      Routine trial_practice
      Routine feedback
    LoopTerminator practiceTrials
    Routine increment_block_practice
  LoopTerminator practiceblocks
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = color_shape_task_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 1), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/greentriangle.png'), ('correct_resp', 'd'), ('iti', 0.545), ('soa', 0.464), ('iti_60hz', 33), ('soa_60hz', 28)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', 'color'), ('trial', 2), ('instruction', 'color'), ('instruction_fr', 'C'), ('instruction_eng', 'C'), ('trial_type', 'switch'), ('stimulus', 'images/redcircle.png'), ('correct_resp', 'k'), ('iti', 0.615), ('soa', 0.442), ('iti_60hz', 37), ('soa_60hz', 27)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'shape'), ('trial', 1), ('instruction', 'shape'), ('instruction_fr', 'F'), ('instruction_eng', 'S'), ('trial_type', 'switch'), ('stimulus', 'images/redtriangle.png'), ('correct_resp', 'k'), ('iti', 0.625), ('soa', 0.448), ('iti_60hz', 38), ('soa_60hz', 27)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', 'shape'), ('trial', 2), ('instruction', 'shape'), ('instruction_fr', 'F'), ('instruction_eng', 'S'), ('trial_type', 'repeat'), ('stimulus', 'images/greencircle.png'), ('correct_resp', 'd'), ('iti', 0.538), ('soa', 0.506), ('iti_60hz', 32), ('soa_60hz', 30)])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = color_shape_task_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine trial_test
      Routine feedback_test
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
