PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = DualNback
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine main
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    ImageComponent grid
      image = ressources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = height
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    PolygonComponent stimulus_visual
      fillColor = white
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent stimulus_auditory
      sound [set every repeat] = $auditory_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent response_visual
      allowedKeys = 'k'
      correctAns = $visual_correct
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    KeyboardComponent response_auditory
      allowedKeys = 'd'
      correctAns = $auditory_correct
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    CodeComponent code_stimulus_visual
      Code Type = Auto->JS
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      Begin Routine:
        # Dictionary mapping square_position to coordinates
        position_dict = {
            'pos_1': (-0.2, 0.2),
            'pos_2': (0, 0.2),
            'pos_3': (0.2, 0.2),
            'pos_4': (-0.2, 0),
            'pos_5': (0, 0),
            'pos_6': (0.2, 0),
            'pos_7': (-0.2, -0.2),
            'pos_8': (0, -0.2),
            'pos_9': (0.2, -0.2)
        }

        # Get the current position from the trial handler
        current_position = square_position

        # Set the position of the stimulus_visual polygon
        stimulus_visual.pos = position_dict[current_position]
    CodeComponent LSL_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("stimulus_" + auditory_path + "_" + square_position)
        marker_sent_visual = False
        marker_sent_auditory = False
      Each Frame:
        if response_visual.keys and not marker_sent_visual:  # Check if a key was pressed for visual response and marker hasn't been sent
            answer_corr_visual = f"response_visual_{response_visual.corr}"
            send_marker(answer_corr_visual)  # Function to send the LSL marker
            marker_sent_visual = True  # Set the flag to indicate that the marker has been sent

        if response_auditory.keys and not marker_sent_auditory:  # Check if a key was pressed for auditory response and marker hasn't been sent
            answer_corr_auditory = f"response_auditory_{response_auditory.corr}"
            send_marker(answer_corr_auditory)  # Function to send the LSL marker
            marker_sent_auditory = True  # Set the flag to indicate that the marker has been sent
      End Routine:
        # Reset the flags after the key is released
        if not response_visual.keys:
            marker_sent_visual = False  # Reset the flag for the next key press

        if not response_auditory.keys:
            marker_sent_auditory = False  # Reset the flag for the next key press
    CodeComponent test
      Code Type = Auto->JS
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      Begin Routine:
        print(block_type)
        print(block_n)
  Routine startTask
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    TextComponent InstructionsText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText2
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the second set of instructions
        InstructionsText2.setText(instructions['Text_start_task'])
    CodeComponent LSL_start_test_blocks
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Experiment:
        is_test = True
      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_DualNback_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('DualNback_end')
    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent InstructionsText3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent go2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if the block is test and block_n is to skip the loop
        if is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            testblocks.finished = True  # Skip the loop
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)

        # Load the scenario CSV file
        scenario_df = pd.read_csv('DualNback_scenario.csv')

        # Filter the practice trials
        practice_indices = scenario_df.index[scenario_df['block'] == 'practice'].tolist()
        # Convert indices to PsychoPy's format (string of ranges)
        selected_rows_practice = f"{practice_indices[0]}:{practice_indices[-1]+1}" if practice_indices else ""
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'DUAL N-BACK',
                'Text_instructions': ("Welcome to the dual n-back task.\n\n"
                                      "In this task, you will be required to perform both two tasks simultaneously.\n"
                                      "In a visual task, you will see squares appearing in different positions on the screen.\n"
                                      "in a auditory task, you will hear a sequence of letters.\n"
                                      "Your goal is to identify when the current visual or auditory stimulus matches one from a specified number of trials ago (n-back).\n\n"
                                      "We will start with some practice sessions to help you get familiar with the task.\n\n"
                                      "Press the space bar to continue."),

                'Practice_Visual': ("Let's begin with the visual part of the task (sequence of squares).\n\n"
                                    "In this part, you will see a sequence of squares appearing in different positions on the screen.\n\n"
                                    "Your goal is to press the 'k' key if the current square position matches the position from n trials ago (visual task).\n"
                                    "In this first practice, we will focus on a 1-back condition, so press 'k' when the square is in the same position as in the previous trial.\n\n"
                                    "Press the space bar to begin the practice session."),

                'Practice_Auditory': ("Now, let's focus on the auditory part of the task (sequence of letters).\n\n"
                                      "In this part, you will hear a sequence of letters.\n\n"
                                      "Your goal is to press the 'd' key if the current letter matches the letter from n trials ago (auditory task).\n"
                                      "In this practice, we will focus on a 1-back condition, so press 'd' when the letter is the same as in the previous trial.\n\n"
                                      "Press the space bar to begin the practice session."),

                'Practice_Both_1back': ("Now, let's combine both tasks (1-back).\n\n"
                                        "In this practice session, you will perform both the visual and auditory tasks simultaneously.\n\n"
                                        "Remember to press 'd' when the letter is the same as in the previous trial, and press 'k' when the square is in the same position as in the previous trial.\n\n"
                                        "Press the space bar to begin the practice session."),

                'Practice_Both_2back': ("Finally, let's combine both tasks in a 2-back condition.\n\n"
                                        "In this last practice session, you will perform both the visual and auditory tasks simultaneously, but in a 2-back condition.\n\n"
                                        "Remember to press 'd' when the letter matches the letter from 2 trials ago, and press 'k' when the square is in the same position as 2 trials ago.\n\n"
                                        "Press the space bar to begin the practice session."),

                'Text_start_task': ("The practice is over. Now we shall begin the real task.\nThis will consist of 6 blocks of either 1-back, 2-back or 3-back.\n"
                                    "Ready?\n\n"
                                    "Press the space bar to begin."),
                'Text_block' : "type : ",
                'Text_pause_between_blocks': ("Pause\n\n"
                                              "Press the space bar when you are ready to continue."),
                'Text_end_task': ("This task is now over.\n\nThank you!\n\nPress the space bar to continue")
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'DUAL N-BACK',
                'Text_instructions': ("Bienvenue dans la tâche de double n-back.\n\n"
                                      "Dans cette tâche, vous devrez effectuer simultanément des tâches visuelles et auditives. "
                                      "Dans la tâche visuelle, vous verrez des carrés apparaissant à différentes positions sur l'écran.\n"
                                      "Dans la tâche auditive, vous entendrez une séquence de lettres.\n"
                                      "Votre objectif est d'identifier si chaque stimulus actuel correspond à celui d'il y a un certain nombre d'essais (n-back).\n\n"
                                      "Commençons par quelques sessions d'entraînement pour vous familiariser avec la tâche.\n\n"
                                      "Appuyez sur la barre d'espace pour continuer."),

                'Practice_Visual': ("Commençons par la partie visuelle de la tâche (séquence de carrés).\n\n"
                                    "Dans cette partie, vous verrez une séquence de carrés apparaissant à différentes positions sur l'écran.\n\n"
                                    "Votre objectif est d'appuyer sur la touche 'k' si la position actuelle du carré correspond à la position d'il y a n essais (tâche visuelle).\n"
                                    "Dans cette première pratique, nous nous concentrerons sur une condition 1-back, donc appuyez sur 'k' lorsque le carré est à la même position que lors de l'essai précédent.\n\n"
                                    "Appuyez sur la barre d'espace pour commencer la session d'entraînement."),

                'Practice_Auditory': ("Passons maintenant à la partie auditive de la tâche (séquence de lettres).\n\n"
                                      "Dans cette partie, vous entendrez une séquence de lettres.\n\n"
                                      "Votre objectif est d'appuyer sur la touche 'd' si la lettre actuelle correspond à la lettre d'il y a n essais (tâche auditive).\n"
                                      "Dans cette pratique, nous nous concentrerons sur une condition 1-back, donc appuyez sur 'd' lorsque la lettre est la même que lors de l'essai précédent.\n\n"
                                      "Appuyez sur la barre d'espace pour commencer la session d'entraînement."),

                'Practice_Both_1back': ("Passons maintenant à la combinaison des deux tâches (1-back).\n\n"
                                        "Dans cette session d'entraînement, vous effectuerez simultanément les tâches visuelle et auditive.\n\n"
                                        "N'oubliez pas d'appuyer sur 'd' lorsque la lettre est la même que lors de l'essai précédent, et appuyez sur 'k' lorsque le carré est à la même position que lors de l'essai précédent.\n\n"
                                        "Appuyez sur la barre d'espace pour commencer la session d'entraînement."),

                'Practice_Both_2back': ("Enfin, combinons les deux tâches en condition 2-back.\n\n"
                                        "Dans cette dernière session d'entraînement, vous effectuerez simultanément les tâches visuelle et auditive, mais en condition 2-back.\n\n"
                                        "N'oubliez pas d'appuyer sur 'd' lorsque la lettre correspond à la lettre d'il y a 2 essais, et appuyez sur 'k' lorsque le carré est à la même position qu'il y a 2 essais.\n\n"
                                        "Appuyez sur la barre d'espace pour commencer la session d'entraînement."),

                'Text_start_task': ("L'entraînement est terminé. Nous allons maintenant commencer la vraie tâche.\nCette dernière sera constituée de 6 blocs de 1-back, 2-back ou 3-back"
                                    "Prêt·e ?\n\n"
                                    "Appuyez sur la barre d'espace pour commencer."),
                'Text_block' : "type : ",
                'Text_pause_between_blocks': ("Pause\n\n"
                                              "Appuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer."),
                'Text_end_task': ("Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer")
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            # Skip the remaining test blocks
            testblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
            block_type = scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_n)]['block_type'].iloc[0]
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
    TextComponent textblock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_type
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    TextComponent wait
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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  Routine block_counter_practice
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    CodeComponent blockSetup_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            # Skip the remaining test blocks
            practiceblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_practiceblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_practice_block")
  Routine pause_practice
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    TextComponent InstructionsText3_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent go2_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsText3_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText3_practice.setText(instructions['Text_pause_between_blocks'])
    CodeComponent check_block_counter_practice
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if the block is test and block_n is to skip the loop
        if is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique()):
            practiceblocks.finished = True  # Skip the loop
  Routine instructions_practice
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    TextComponent text_practice
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.6
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    KeyboardComponent startInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsText1
      Code Type = Auto->JS
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      Begin Routine:
        # Extract block_type for the current block
        current_practice_block = scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)]['block_n'].values[0]

        # Set the instruction text based on the block type
        if current_practice_block == 1:
            text_practice.text = instructions['Practice_Visual']
        elif current_practice_block == 2:
            text_practice.text = instructions['Practice_Auditory']
        elif current_practice_block == 3:
            text_practice.text = instructions['Practice_Both_1back']
        elif current_practice_block == 4:
            text_practice.text = instructions['Practice_Both_2back']
    CodeComponent LSL_DualNback_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('DualNback_start')
    CodeComponent define_block_rows_practice
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_practice = True
      Begin Routine:
        # Set the stimuli based on the block type
        if current_practice_block == 1: #Practice_Visual
            play_auditory = False
            play_visual = True
        elif current_practice_block == 2: # Practice_Auditory
            play_auditory = True
            play_visual = False
        elif current_practice_block == 3: # Practice_Both_1back
            play_auditory = True
            play_visual = True
        elif current_practice_block == 4: # Practice_Both_2back
            play_auditory = True
            play_visual = True
  Routine instructions1
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    KeyboardComponent startInst_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.6
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    CodeComponent code_text_instructions
      Code Type = Auto->JS
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      Begin Routine:
        text_instructions.text = instructions['Text_instructions']
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
  Routine main_practice
    RoutineSettingsComponent main_practice
      stopVal [duration (s)] = 3
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    ImageComponent grid_practice
      image = ressources/grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = height
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    PolygonComponent stimulus_visual_practice
      fillColor = white
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent stimulus_auditory_practice
      sound [set every repeat] = $auditory_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent response_visual_practice
      allowedKeys = 'k'
      correctAns = $visual_correct
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    KeyboardComponent response_auditory_practice
      allowedKeys = 'd'
      correctAns = $auditory_correct
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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    CodeComponent code_stimulus_visual_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Dictionary mapping square_position to coordinates
        position_dict = {
            'pos_1': (-0.2, 0.2),
            'pos_2': (0, 0.2),
            'pos_3': (0.2, 0.2),
            'pos_4': (-0.2, 0),
            'pos_5': (0, 0),
            'pos_6': (0.2, 0),
            'pos_7': (-0.2, -0.2),
            'pos_8': (0, -0.2),
            'pos_9': (0.2, -0.2)
        }

        # Get the current position from the trial handler
        current_position = square_position

        # Set the position of the stimulus_visual polygon
        stimulus_visual_practice.pos = position_dict[current_position]
    CodeComponent LSL_stimulus_practice
      Code Type = Auto->JS
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      Begin Routine:
        send_marker("practice_stimulus_" + auditory_path + "_" + square_position)
      End Routine:
        answer_corr_auditory = f"response_auditory_{response_auditory.corr}"
        answer_corr_visual = f"response_visual_{response_visual.corr}"
        send_marker(answer_corr_auditory)  # Function to send the LSL marker
        send_marker(answer_corr_visual)  # Function to send the LSL marker
    CodeComponent code_stimulus
      Code Type = Auto->JS
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      Each Frame:
        if play_visual == False:
            stimulus_visual_practice.setAutoDraw(False)  # Disable the visual stimulus
        if play_auditory == False:
            stimulus_auditory_practice.stop()  # Stop the auditory stimulus
    ImageComponent feedback_auditory
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [condition] = $False
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    ImageComponent feedback_visual
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [condition] = $False
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    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_duration = 0.5  # duration of feedback display
        show_feedback = False  # initialize feedback visibility
      Begin Routine:
        show_feedback = False  # Reset feedback visibility at the start of each trial
      Each Frame:
        if response_visual_practice.keys:  # Check if a key was pressed for visual response
            if play_visual:  # Only proceed if visual feedback is needed
                if response_visual_practice.corr:  # If correct response
                    feedback_visual.setImage('ressources/correct.png')
                else:  # If incorrect response
                    feedback_visual.setImage('ressources/incorrect.png')
                show_feedback = True  # Set flag to show visual feedback
                feedback_start_time = t  # Record the time when feedback starts
                feedback_visual.setAutoDraw(True)  # Start drawing visual feedback

        if response_auditory_practice.keys:  # Check if a key was pressed for auditory response
            if play_auditory:  # Only proceed if auditory feedback is needed
                if response_auditory_practice.corr:  # If correct response
                    feedback_auditory.setImage('ressources/correct.png')
                else:  # If incorrect response
                    feedback_auditory.setImage('ressources/incorrect.png')
                show_feedback = True  # Set flag to show auditory feedback
                feedback_start_time = t  # Record the time when feedback starts
                feedback_auditory.setAutoDraw(True)  # Start drawing auditory feedback

        if show_feedback:  # If feedback is shown, control timing
            if t >= feedback_start_time + feedback_duration:  # Stop showing feedback after 0.5 seconds
                feedback_visual.setAutoDraw(False)
                feedback_auditory.setAutoDraw(False)
                show_feedback = False  # Reset feedback flag
                continueRoutine = False  # End the routine once feedback is displayed
      End Routine:
        # Clear feedback visuals
        feedback_visual.setAutoDraw(False)
        feedback_auditory.setAutoDraw(False)
Flow
  Routine init
  Routine instructions1
  LoopInitiator practiceblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = DualNback_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 1), ('square_position', 'pos_2'), ('visual_correct', None), ('auditory_path', 'ressources/3.wav'), ('auditory_correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 2), ('square_position', 'pos_9'), ('visual_correct', None), ('auditory_path', 'ressources/4.wav'), ('auditory_correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 3), ('square_position', 'pos_9'), ('visual_correct', 'k'), ('auditory_path', 'ressources/4.wav'), ('auditory_correct', 'd')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 4), ('square_position', 'pos_6'), ('visual_correct', None), ('auditory_path', 'ressources/2.wav'), ('auditory_correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 5), ('square_position', 'pos_6'), ('visual_correct', 'k'), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 6), ('square_position', 'pos_7'), ('visual_correct', None), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', 'd')])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
    Routine block_counter_practice
    Routine instructions_practice
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = DualNback_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 1), ('square_position', 'pos_2'), ('visual_correct', None), ('auditory_path', 'ressources/3.wav'), ('auditory_correct', None)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 2), ('square_position', 'pos_9'), ('visual_correct', None), ('auditory_path', 'ressources/4.wav'), ('auditory_correct', None)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 3), ('square_position', 'pos_9'), ('visual_correct', 'k'), ('auditory_path', 'ressources/4.wav'), ('auditory_correct', 'd')]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 4), ('square_position', 'pos_6'), ('visual_correct', None), ('auditory_path', 'ressources/2.wav'), ('auditory_correct', None)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 5), ('square_position', 'pos_6'), ('visual_correct', 'k'), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', None)]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 6), ('square_position', 'pos_7'), ('visual_correct', None), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', 'd')])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
      Routine main_practice
    LoopTerminator practiceTrials
    Routine pause_practice
  LoopTerminator practiceblocks
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = DualNback_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 1), ('square_position', 'pos_6'), ('visual_correct', None), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 2), ('square_position', 'pos_2'), ('visual_correct', None), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 3), ('square_position', 'pos_2'), ('visual_correct', 'k'), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', 'd'), ('trial_type', 'both')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 4), ('square_position', 'pos_8'), ('visual_correct', None), ('auditory_path', 'ressources/7.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 5), ('square_position', 'pos_9'), ('visual_correct', None), ('auditory_path', 'ressources/1.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 6), ('square_position', 'pos_3'), ('visual_correct', None), ('auditory_path', 'ressources/1.wav'), ('auditory_correct', 'd'), ('trial_type', 'auditory_only')])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
    Routine block_counter
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = DualNback_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 1), ('square_position', 'pos_6'), ('visual_correct', None), ('auditory_path', 'ressources/6.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
        OrderedDict([('block', 'practice'), ('block_n', 1), ('block_type', '1-back'), ('trial', 2), ('square_position', 'pos_2'), ('visual_correct', None), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
        OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', '1-back'), ('trial', 9), ('square_position', 'pos_4'), ('visual_correct', None), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
        OrderedDict([('block', 'practice'), ('block_n', 2), ('block_type', '1-back'), ('trial', 10), ('square_position', 'pos_4'), ('visual_correct', 'k'), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', 'd'), ('trial_type', 'both')]),
        OrderedDict([('block', 'practice'), ('block_n', 3), ('block_type', '1-back'), ('trial', 1), ('square_position', 'pos_5'), ('visual_correct', None), ('auditory_path', 'ressources/4.wav'), ('auditory_correct', None), ('trial_type', 'none')]),
        OrderedDict([('block', 'practice'), ('block_n', 4), ('block_type', '2-back'), ('trial', 9), ('square_position', 'pos_6'), ('visual_correct', None), ('auditory_path', 'ressources/5.wav'), ('auditory_correct', None), ('trial_type', 'none')])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
      Routine main
    LoopTerminator testTrials
    Routine pause
  LoopTerminator testblocks
  Routine thanks
