PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = KeepTrack
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine init
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    CodeComponent define_block
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        # Load the CSV file
        scenario_df = pd.read_csv('keep_track_scenario.csv')

        # Select practice and test blocks
        practice_blocks = scenario_df[scenario_df['block'] == 'practice']['block_n'].unique().tolist()
        test_blocks = scenario_df[scenario_df['block'] == 'test']['block_n'].unique().tolist()
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'French'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task': 'KEEP-TRACK',
                'Introduction1': "Welcome to the Keep-Track task.\nIn this task, you will be presented with a sequence of 15 words, one at a time in the center of the screen.\n\nThe words will be selected from the following 6 categories:\n\n- Animals: bear, dog, horse, lion, rabbit, wolf\n- Colors: blue, green, white, purple, red, yellow\n- Countries: Australia, Brazil, China, Italy, India, Japan\n- Fruits: banana, strawberry, melon, pear, apple, apricot\n- Body: mouth, arm, elbow, foot, leg, hand\n- Family: mother, father, brother, sister, aunt, uncle\n\nTake a moment to familiarize yourself with the words.",
                'Introduction2': "Once the 15 words have been presented, you will be asked to recall the last word presented for the selected categories.\nYou will always be informed of the categories to pay attention to before each new round begins.\n\nExample: The categories to keep track of are 'Animals' and 'Family'.\n\nThe 15 words are presented one by one in the center of the screen. The last item presented for the 'Animals' category is 'bear'. Type 'bear' for 'Animals' when you are asked to enter your responses in the text boxes. Make sure the spelling of the word you enter is correct.\n\n!Important!\nIt is important that you memorize the words.\nDo not write down the words.\n\nYou can start the practice when you are ready.",
                'Start_Actual_Task': "Start of the Test\n\nThe training is over and the test is about to begin. There will be 12 rounds in total and the maximum number of categories to track will be 5.\n\nHere is a reminder of all the possible words:\n\n- Animals: bear, dog, horse, lion, rabbit, wolf\n- Colors: blue, green, white, purple, red, yellow\n- Countries: Australia, Brazil, China, Italy, India, Japan\n- Fruits: banana, strawberry, melon, pear, apple, apricot\n- Body: mouth, arm, elbow, foot, leg, hand\n- Family: mother, father, brother, sister, aunt, uncle\n\n!Important!\nIt is important that you memorize the words.\nDo not write down the words.\n\nYou can start the test when you are ready.",
                'Pause': "Pause\n\nPress the space bar when you are ready to continue",
                'text_end_task': "This task is now over.\n\nThank you!\n\nPress the space bar to continue",
                'MemorizeCategories': "Memorize the words from the following categories:\n\n\n\nPress spacebar when ready"
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task': 'KEEP-TRACK',
                'Introduction1': "Bienvenue dans la tâche de 'Keep-Track'.\nDans cette tâche, une séquence de 15 mots vous sera présentée, un par un au milieu de l'écran.\n\nLes mots seront sélectionnés parmi les 6 catégories suivantes :\n\n- Animaux: ours, chien, cheval, lion, lapin, loup\n- Couleurs: bleu, vert, blanc, violet, rouge, jaune\n- Pays: Australie, Brésil, Chine, Italie, Inde, Japon\n- Fruits: banane, fraise, melon, poire, pomme, abricot\n- Corps: bouche, bras, coude, pied, jambe, main\n- Famille: mère, père, frère, soeur, tante, oncle\n\nPrenez un moment pour vous familiariser avec les mots.",
                'Introduction2': "Une fois que les 15 mots auront défilés, il vous sera demandé de rappeler le dernier mot présenté pour les catégories sélectionnées.\nIl vous sera toujours indiqué les catégories auxquelles il faudra prêter attention avant le début de chaque nouvelle manche.\n\nExemple: Les catégories à suivre sont : 'Animaux' et 'Famille'.\n\nLes 15 mots défilent un par un au milieu de l'écran. Le dernier élément présenté pour la catégorie 'Animaux' est 'ours'. Tapez 'ours' pour 'Animaux' lorsqu'on vous demandera d'entrer vos réponses dans les zones de texte. Vérifiez bien que l'orthographe du mot que vous entrez est correcte.\n\n!Important!\nIl est important que vous mémorisiez les mots.\nN'écrivez pas les mots.\n\nVous pouvez commencer l'entraînement quand vous êtes prêt.",
                'Start_Actual_Task': "Début du test\n\nL'entraînement est terminé et le test est sur le point de commencer. Il y aura 12 manches au total et le nombre maximum de catégories à suivre sera de 5.\n\nVoici un rappel de tous les mots possibles:\n\n- Animaux: ours, chien, cheval, lion, lapin, loup\n- Couleurs: bleu, vert, blanc, violet, rouge, jaune\n- Pays: Australie, Brésil, Chine, Italie, Inde, Japon\n- Fruits: banane, fraise, melon, poire, pomme, abricot\n- Corps: bouche, bras, coude, pied, jambe, main\n- Famille: mère, père, frère, soeur, tante, oncle\n\n!Important!\nIl est important que vous mémorisiez les mots.\nN'écrivez pas les mots.\n\nVous pouvez commencer le test quand vous êtes prêt.",
                'Pause': "Pause\n\nAppuyez sur la barre d'espace lorsque vous êtes prêt·e à continuer",
                'text_end_task': "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer",
                'MemorizeCategories': "Mémorisez les mots des catégories suivantes :\n\n\n\nAppuyez sur la barre d'espace pour continuer"
            }

        # Category translation dictionary with lowercase keys
        category_translations = {
            'animal': 'animal',
            'color': 'couleur',
            'country': 'pays',
            'fruit': 'fruit',
            'body': 'corps',
            'family': 'famille'
        }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent DeactivateMouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine stimulus
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    TextComponent word
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [frame N] = 90
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    CodeComponent code_word
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        if language == "English":
            word.text = stim_eng
        else:
            word.text = stim_fr
    CodeComponent LSL_word
      Code Type = Auto->JS
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      Begin Routine:
        if language == "English":
            send_marker(stim_eng)
        else:
            send_marker(stim_fr)
    TextComponent text_categories_stim
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
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    CodeComponent code_text_categories_stim
      Code Type = Auto->JS
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      Begin Routine:
        # Translate categories if language is French
        if language == "French":
            categories_to_memorize = [category_translations.get(cat, cat) for cat in categories_to_memorize]

        text_categories_stim.setText("   ".join(categories_to_memorize))
  Routine thanks
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent LSL_KeepTrack_end
      Code Type = Auto->JS
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      End Routine:
        send_marker('KeepTrack_end')
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['text_end_task'])
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
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    TextComponent ISI_wait
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [frame N] = 30
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    TextComponent text_categories_ISI
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    CodeComponent code_text_categories_ISI
      Code Type = Auto->JS
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      Begin Routine:
        # Translate categories if language is French
        if language == "French":
            categories_to_memorize = [category_translations.get(cat, cat) for cat in categories_to_memorize]

        text_categories_ISI.setText("   ".join(categories_to_memorize))
  Routine block_counter_practice
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    CodeComponent blockSetup_practice
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1

        # Determine the current block type and number
        # block_type = 'test'
        if block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            # Skip the remaining test blocks
            practiceblocks.finished = True
            continueRoutine = False
        else:
            block_n = block_index  # block_n in CSV starts from 1
    CodeComponent LSL_start_testblock_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_practice")
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        print("block_n = " + str(block_n))
  Routine increment_block_practice
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    CodeComponent check_block_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the block is test and block_n is to skip the loop
        if is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
            practiceblocks.finished = True  # Skip the loop
  Routine startTask
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    TextComponent instruction_text_component_start_task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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    KeyboardComponent start_Task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_InstructionsStartTask
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_start_task.text = instructions['Start_Actual_Task']
    CodeComponent LSL_start_task
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_test_blocks")
    CodeComponent define_block_rows
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize block variables
        block_index = 0  # Start with the first block for test
        is_test = True
        is_practice = False
    CodeComponent test_script
      Code Type = Auto->JS
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      Begin Routine:
        # Debugging print statements
        print("START TASK")
        print("START TASK")
        print("START TASK")
        print("START TASK")
        print("START TASK")
        print("START TASK")
        print("START TASK")
  Routine block_counter
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    CodeComponent blockSetup
      Code Type = Auto->JS
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      Begin Routine:
        # Increment block counter
        block_index += 1
    CodeComponent LSL_start_testblock
      Code Type = Auto->JS
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      Begin Experiment:
        send_marker("start_block")
  Routine pause
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    TextComponent instruction_text_component_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent Unpause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_InstructionsPause
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_pause.text = instructions['Pause']
  Routine instructions_test
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    CodeComponent code_mouse
      Code Type = Auto->JS
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      Each Frame:
        event.Mouse(visible=False)
    CodeComponent code_IdentifyCategories
      Code Type = Auto->JS
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      Begin Routine:
        # Determine the current block type and number
        if is_practice:
            block_type = 'practice'
        else:
            block_type = 'test'

        # Initialize categories_to_memorize as an empty list
        categories_to_memorize = []

        # Get the number of words to memorize from the current block
        num_categories = int(scenario_df[(scenario_df['block'] == block_type) & (scenario_df['block_n'] == block_index)].iloc[0]['word_n'])

        # Dynamically add categories based on the CSV columns
        for i in range(1, num_categories + 1):
            category = scenario_df[(scenario_df['block'] == block_type) & (scenario_df['block_n'] == block_index)].iloc[0][f'cat_to_memorize{i}']
            if category != 'NA':
                # Translate the category if language is French
                if language == "French" and category in category_translations:
                    category = category_translations[category]
                categories_to_memorize.append(category)

        # Save the categories to memorize in the experiment data
        thisExp.addData('categories_to_memorize', categories_to_memorize)
    TextComponent text_instructions
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_text_instructions
      Code Type = Auto->JS
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      Begin Routine:
        text_instructions.setText(instructions['MemorizeCategories'])
    TextComponent text_categories
      letterHeight = 0.04
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_categories
      Code Type = Auto->JS
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      Begin Routine:
        # Translate categories if language is French
        if language == "French":
            categories_to_memorize = [category_translations.get(cat, cat) for cat in categories_to_memorize]

        text_categories.setText("   ".join(categories_to_memorize))
    CodeComponent LSL_start_practice
      Code Type = Auto->JS
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      End Routine:
        send_marker('practice_block')
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
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    CodeComponent DynamicTextBoxes
      Code Type = Auto->JS
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      Begin Routine:
        # Create a list to hold the text boxes
        text_boxes = []

        # Create the text boxes dynamically based on categories_to_memorize
        for i, category in enumerate(categories_to_memorize):
            # Create a new text box with the category name
            text_box = visual.TextBox2(
                win=win,
                text=f"{category}: ",  # Include category name
                font='Arial',
                pos=(0, 0.2 - i*0.1),  # Adjust the position as needed
                letterHeight=0.05,
                size=(1.0, 0.1),
                borderWidth=2.0,
                color='black',
                colorSpace='rgb',
                opacity=None,
                bold=False,
                italic=False,
                lineSpacing=1.0,
                padding=None,
                alignment='center',
                anchor='center',
                fillColor='white',
                borderColor='black',
                flipHoriz=False,
                flipVert=False,
                editable=True,
                name=f'text_box_{i}',
                autoLog=True,
            )
            # Add the text box to the list
            text_boxes.append(text_box)

        # Create a "Validate" button
        validate_button = visual.ButtonStim(
            win,
            text='Validate',
            font='Arial',
            pos=(0, -0.4),  # Position it below the text boxes
            letterHeight=0.05,
            size=(0.3, 0.1),
            borderWidth=2.0,
            fillColor='lightgrey',
            borderColor='black',
            color='black',
            colorSpace='rgb',
            opacity=1,
            bold=True,
            italic=False,
            padding=None,
            anchor='center',
            name='validate_button'
        )
      Each Frame:
        # Activate Mouse
        event.Mouse(visible=True)

        # Draw the text boxes
        for text_box in text_boxes:
            text_box.draw()

        # Draw the validate button
        validate_button.draw()

        # Check for mouse clicks on the validate button
        if mouse.isPressedIn(validate_button):
            continueRoutine = False  # End the routine when the button is clicked
      End Routine:
        # Clear the text boxes
        for text_box in text_boxes:
            text_box.setAutoDraw(False)

        # Save the responses
        responses = {}
        for i, text_box in enumerate(text_boxes):
            responses[f'category_{i}'] = text_box.text

        # Save the responses in the experiment data
        thisExp.addData('responses', responses)
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent check_block_counter_practice
      Code Type = Auto->JS
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      End Routine:
        # Check if the block is test and block_n is to skip the loop
        #if is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique()):
        #    practiceblocks.finished = True  # Skip the loop

        # Check if the block is practice or test and if block_index exceeds the number of available blocks to skip the loop
        if (is_practice and block_index >= len(scenario_df[scenario_df['block'] == 'practice']['block_n'].unique())) or (is_test and block_index >= len(scenario_df[scenario_df['block'] == 'test']['block_n'].unique())):
            if is_practice:
                print("All practice blocks completed.")
                practiceblocks.finished = True  # Skip the practice loop
            elif is_test:
                print("All test blocks completed.")
                testblocks.finished = True  # Skip the test loop
    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent LSL_recall
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('recall')
      End Routine:
        send_marker('end_recall')
  Routine instructions2
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    TextComponent instruction_text_component_introduction_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.6
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    KeyboardComponent end_inst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_Instructions_2
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_introduction_2.text = instructions['Introduction2']
    CodeComponent code_initialize_block_index
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize block variables
        block_index = 0  # Start with the first block for practice
        is_practice = True
        is_test = False
    CodeComponent code_nametask_2
      Code Type = Auto->JS
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      Begin Routine:
        nametask_2.setText(instructions['name_task'])
    TextComponent nametask_2
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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  Routine instructions1
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    TextComponent instruction_text_component_introduction_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.6
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    KeyboardComponent end_inst_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_Instructions_1
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text_component_introduction_1.text = instructions['Introduction1']
    CodeComponent LSL_KT_start
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('KeepTrack_start')
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine instructions1
  Routine instructions2
  LoopInitiator practiceblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = keep_track_scenario.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'practice'), ('block_n', 1), ('word_n', 2), ('trial', 1), ('stim_fr', 'ours'), ('stim_eng', 'bear'), ('animal', 'bear'), ('color', None), ('country', None), ('fruit', None), ('body', None), ('family', None), ('cat_to_memorize1', 'animal'), ('cat_to_memorize2', 'country'), ('cat_to_memorize3', None), ('cat_to_memorize4', None), ('cat_to_memorize5', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 1), ('word_n', 2), ('trial', 2), ('stim_fr', 'fraise'), ('stim_eng', 'strawberry'), ('animal', 'bear'), ('color', None), ('country', None), ('fruit', None), ('body', None), ('family', None), ('cat_to_memorize1', 'animal'), ('cat_to_memorize2', 'country'), ('cat_to_memorize3', None), ('cat_to_memorize4', None), ('cat_to_memorize5', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('word_n', 3), ('trial', 1), ('stim_fr', 'jambe'), ('stim_eng', 'leg'), ('animal', None), ('color', None), ('country', None), ('fruit', None), ('body', None), ('family', None), ('cat_to_memorize1', 'animal'), ('cat_to_memorize2', 'country'), ('cat_to_memorize3', 'color'), ('cat_to_memorize4', None), ('cat_to_memorize5', None)]),
      OrderedDict([('block', 'practice'), ('block_n', 2), ('word_n', 3), ('trial', 2), ('stim_fr', 'Chine'), ('stim_eng', 'China'), ('animal', None), ('color', None), ('country', 'China'), ('fruit', None), ('body', None), ('family', None), ('cat_to_memorize1', 'animal'), ('cat_to_memorize2', 'country'), ('cat_to_memorize3', 'color'), ('cat_to_memorize4', None), ('cat_to_memorize5', None)])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
    Routine block_counter_practice
    Routine instructions_test
    LoopInitiator practiceTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'practice') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = keep_track_scenario.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine ISI
      Routine stimulus
    LoopTerminator practiceTrials
    Routine response
  LoopTerminator practiceblocks
  Routine startTask
  LoopInitiator testblocks loopType="TrialHandler"
    Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
    conditionsFile = keep_track_scenario.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine block_counter
    Routine instructions_test
    LoopInitiator testTrials loopType="TrialHandler"
      Selected rows = $scenario_df[(scenario_df['block'] == 'test') & (scenario_df['block_n'] == block_index)].index.tolist()
      conditionsFile = keep_track_scenario.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine ISI
      Routine stimulus
    LoopTerminator testTrials
    Routine response
    Routine pause
  LoopTerminator testblocks
  Routine thanks
