PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Knowledge
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Trial
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    TextComponent stimulus
      letterHeight = 0.05
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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    CodeComponent code_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Update the stimulus text based on the language
        if language == "English":
            stimulus.text = stim_eng
        elif language == "French":
            stimulus.text = stim_fr
    TextboxComponent textbox_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.25)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = >
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    CodeComponent code_TextTrial
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        TextTrial.setText(instructions['Text_trial'] + str(trial) + "/40")

        # Set the placeholder text for the textboxes based on the selected language
        textbox_1.setText('')
        textbox_1.setPlaceholder(instructions['Placeholder1'])
    TextComponent TextTrial
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_timer
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the timer (in seconds)
        timer_task = 30
      Begin Routine:
        # Initialize the timer
        routine_timer = core.Clock()
        routine_timer.reset()
      Each Frame:
        # Calculate remaining time
        remaining_time = timer_task - routine_timer.getTime()

        # Show the timer only if there are 10 seconds or less remaining
        if remaining_time <= 10:
            # Update the timer text
            text_timer.setText(f'{remaining_time:.0f}')
            text_timer.setAutoDraw(True)  # Make sure the timer text is drawn
        else:
            text_timer.setAutoDraw(False)  # Hide the timer text

        # End the routine if time is up
        if remaining_time <= 0:
            continueRoutine = False
    TextComponent text_timer
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_start_trial
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{trial}"
        send_marker(marker)  # Function to send the LSL marker
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Save the responses from the textboxes
        response1 = textbox_1.text

        # Also add them to the data file directly
        thisExp.addData('response1', response1)

        # Ensure the data is saved immediately
        thisExp.nextEntry()
  Routine init
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    CodeComponent logging
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'GENERAL KNOWLEDGE',
                'Text_instructions': (
                    "Welcome to the general knowledge Task.\n\n"
                    "In this task, you will see a question on the screen.\n"
                    "Your objective is to provide an accurate answer to the question. "
                    "You will have a time limit of 30 seconds per question. "
                    "If you are unsure, provide your best guess.\n\n"
                    "For example: 'At what temperature does water boil (in degrees celcius)?'\n"
                    "The expected answer is: '100°'\n\n"
                    "Whenever you're ready, press the spacebar to continue."
                ),
                'Text_trial': "Question ",
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                ),
                'Placeholder1': "Type your answer here..."
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'CULTURE GÉNÉRALE',
                'Text_instructions': (
                    "Bienvenue dans la tâche de culture générale.\n\n"
                    "Dans cette tâche, vous verrez une question à l'écran.\n"
                    "Votre objectif est de fournir une réponse précise à la question. "
                    "Vous disposerez d'un temps limité de 30 secondes par question. "
                    "Si vous n'êtes pas sûr, donnez votre meilleure supposition.\n\n"
                    "Par exemple: 'À quelle température l'eau entre-t-elle en ébullition (en degré celcius) ?'\n"
                    "La réponse attendue est : '100°'\n\n"
                    "Lorsque vous êtes prêt, appuyez sur la barre d'espace pour continuer."
                ),
                'Text_trial': "Question ",
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                ),
                'Placeholder1': "Tapez votre réponse ici..."
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent ActivateMouse
      Code Type = Auto->JS
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      Each Frame:
        # Activate mouse
        event.Mouse(visible=True)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine end
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    CodeComponent LSL_knowledge_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Knowledge_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction1
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    TextComponent TextInstructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.55
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instructions
      Code Type = Auto->JS
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      Begin Routine:
        TextInstructions.setText(instructions['Text_instructions'])
    CodeComponent LSL_start_test
      Code Type = Auto->JS
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      End Routine:
        send_marker("Knowledge_start")
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine Instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = knowledge.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_eng', 'What is a thermometer?'), ('stim_fr', "Qu'est-ce qu'un thermomètre ?"), ('trial', 1)]),
      OrderedDict([('stim_eng', 'On which continent is Egypt located?'), ('stim_fr', "Sur quel continent se trouve l'Égypte ?"), ('trial', 2)]),
      OrderedDict([('stim_eng', 'What is the largest organ in the human body?'), ('stim_fr', 'Quel est le plus grand organe du corps humain ?'), ('trial', 3)]),
      OrderedDict([('stim_eng', 'What planet is known as the Red Planet?'), ('stim_fr', 'Quelle planète est connue sous le nom de planète rouge ?'), ('trial', 4)]),
      OrderedDict([('stim_eng', "Who wrote 'Romeo and Juliet'?"), ('stim_fr', "Qui a écrit 'Roméo et Juliette' ?"), ('trial', 5)]),
      OrderedDict([('stim_eng', 'What is the capital of France?'), ('stim_fr', 'Quelle est la capitale de la France ?'), ('trial', 6)]),
      OrderedDict([('stim_eng', "What element does 'O' represent on the periodic table?"), ('stim_fr', "Quel élément le symbole 'O' représente-t-il dans le tableau périodique ?"), ('trial', 7)]),
      OrderedDict([('stim_eng', 'Who was the first President of the United States?'), ('stim_fr', 'Qui fut le premier président des États-Unis ?'), ('trial', 8)]),
      OrderedDict([('stim_eng', 'What is the hardest natural substance on Earth?'), ('stim_fr', 'Quelle est la substance naturelle la plus dure sur Terre ?'), ('trial', 9)]),
      OrderedDict([('stim_eng', 'What is the smallest prime number?'), ('stim_fr', 'Quel est le plus petit nombre premier ?'), ('trial', 10)])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
    Routine Trial
  LoopTerminator trials
  Routine end
