PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Similarities
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Trial
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    TextComponent stimulus
      letterHeight = 0.06
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Update the stimulus text based on the language
        if language == "English":
            stimulus.text = stim_eng
        elif language == "French":
            stimulus.text = stim_fr
    TextboxComponent textbox_1
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = >
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    TextComponent text_timer
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_timer
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the timer (in seconds)
        timer_task = 30
      Begin Routine:
        # Initialize the timer
        timer_task = time
        routine_timer = core.Clock()
        routine_timer.reset()
      Each Frame:
        # Calculate remaining time
        remaining_time = timer_task - routine_timer.getTime()

        # Show the timer only if there are 10 seconds or less remaining
        if remaining_time <= 15:
            # Update the timer text
            text_timer.setText(f'{remaining_time:.0f}')
            text_timer.setAutoDraw(True)  # Make sure the timer text is drawn
        else:
            text_timer.setAutoDraw(False)  # Hide the timer text

        # End the routine if time is up
        if remaining_time <= 0:
            continueRoutine = False
    TextComponent TextTrial
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_TextTrial
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        TextTrial.setText(instructions['Text_trial'] + str(trial) + "/25")

        # Set the placeholder text for the textboxes based on the selected language
        textbox_1.setText('')
        textbox_1.setPlaceholder(instructions['Placeholder1'])
        textbox_2.setText('')
        textbox_2.setPlaceholder(instructions['Placeholder2'])
    CodeComponent LSL_start_trial
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{trial}"
        send_marker(marker)  # Function to send the LSL marker
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Save the responses from the textboxes
        response1 = textbox_1.text
        response2 = textbox_2.text

        # Also add them to the data file directly
        thisExp.addData('response1', response1)
        thisExp.addData('response2', response2)

        # Ensure the data is saved immediately
        thisExp.nextEntry()
  Routine init
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    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'SIMILARITIES',
                'Text_instructions': (
                    "Welcome to the Similarity Task.\n\n"
                    "In this task, you will see two words on the screen.\n"
                    "Your objective is to find and write a WORD or a DESCRIPTION that best describes the similarity between these two words. "
                    "If you are unsure, you can also provide a second description. "
                    "You will have between 30 and 60 seconds to answer depending on the items.\n\n"
                    "For example: HOT - COLD\n\n"
                    "The word that would best describe the similarity is 'temperature'.\n"
                    "An alternative would be 'can be measured by a thermometer'.\n"
                    "Note that 'opposite' or 'different' would not be considered as a valid answer as this does not describe the similarity.\n\n"
                    "Whenever you're ready, press the spacebar to start."
                ),
                'Text_trial': "Words ",
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                ),
                'Placeholder1': "Type first word/description here...",
                'Placeholder2': "Type second word/description here (optional)..."
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'SIMILARITÉS',
                'Text_instructions': (
                    "Bienvenue dans la tâche de Similarité.\n\n"
                    "Dans cette tâche, vous verrez deux mots à l'écran.\n"
                    "Votre objectif est de trouver et écrire un MOT ou une DESCRIPTION qui décrit le mieux la similarité entre ces deux mots. "
                    "Si vous n'êtes pas sûr, vous pouvez également fournir une deuxième description. "
                    "Vous aurez entre 30 et 60 secondes pour répondre en fonction des items.\n\n"
                    "Par exemple: CHAUD - FROID\n\n"
                    "Le mot qui décrirait le mieux la similarité est 'température'.\n"
                    "Une alternative serait 'peut être mesuré par un thermomètre'.\n"
                    "Notez que 'inverse' ou 'différents' ne sont pas des réponses valides car ils ne décrivent pas ce qui est similaire.\n\n"
                    "Lorsque vous êtes prêt, appuyez sur la barre d'espace pour commencer."
                ),
                'Text_trial': "Mots ",
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                ),
                'Placeholder1': "Tapez le premier mot/la première description ici...",
                'Placeholder2': "Tapez le deuxième mot/la deuxième description ici (facultatif)..."
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent logging
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)
    CodeComponent Activate_Mouse
      Code Type = Auto->JS
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      Each Frame:
        # Activate mouse
        event.Mouse(visible=True)
    CodeComponent QuitTask_2
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine end
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    CodeComponent LSL_Similarities_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Similarities_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction1
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    TextComponent TextInstructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instructions
      Code Type = Auto->JS
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      Begin Routine:
        TextInstructions.setText(instructions['Text_instructions'])
    CodeComponent LSL_start_test
      Code Type = Auto->JS
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      End Routine:
        send_marker("start_Similarities")
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
Flow
  Routine init
  Routine Instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = similarities.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_fr', 'Jaune - Bleu'), ('stim_eng', 'Yellow - Blue'), ('trial', 1)]),
      OrderedDict([('stim_fr', 'Piano - Tambour'), ('stim_eng', 'Piano - Drum'), ('trial', 2)]),
      OrderedDict([('stim_fr', 'Poème - Statue'), ('stim_eng', 'Poem - Statue'), ('trial', 3)]),
      OrderedDict([('stim_fr', 'Bourgeon - Bébé'), ('stim_eng', 'Bud - Baby'), ('trial', 4)]),
      OrderedDict([('stim_fr', 'Miel - Lait'), ('stim_eng', 'Honey - Milk'), ('trial', 5)]),
      OrderedDict([('stim_fr', 'Nourriture - Carburant'), ('stim_eng', 'Food - Fuel'), ('trial', 6)]),
      OrderedDict([('stim_fr', 'Cube - Cylindre'), ('stim_eng', 'Cube - Cylinder'), ('trial', 7)]),
      OrderedDict([('stim_fr', 'Nez - Langue'), ('stim_eng', 'Nose - Tongue'), ('trial', 8)]),
      OrderedDict([('stim_fr', 'Soie - Laine'), ('stim_eng', 'Silk - Wool'), ('trial', 9)]),
      OrderedDict([('stim_fr', 'Éolienne - Barrage'), ('stim_eng', 'Wind turbine - Dam'), ('trial', 10)]),
      OrderedDict([('stim_fr', 'Éphémère - Permanent'), ('stim_eng', 'Ephemeral - Permanent'), ('trial', 11)]),
      OrderedDict([('stim_fr', 'Inondation - Sècheresse'), ('stim_eng', 'Flooding - Drought'), ('trial', 12)]),
      OrderedDict([('stim_fr', 'Sédentaire - Nomade'), ('stim_eng', 'Sedentary - Nomadic'), ('trial', 13)]),
      OrderedDict([('stim_fr', 'Autoriser - Interdire'), ('stim_eng', 'Allow - disallow'), ('trial', 14)]),
      OrderedDict([('stim_fr', 'Réalité - Rêve'), ('stim_eng', 'Reality - Dream'), ('trial', 15)])]
    Routine Trial
  LoopTerminator trials
  Routine end
