PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Vocabulary
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Trial
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    TextComponent stimulus
      letterHeight = 0.1
      pos = [0, 0.1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_stimulus
      Code Type = Auto->JS
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      Begin Routine:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Update the stimulus text based on the language
        if language == "English":
            stimulus.text = stim_eng
        elif language == "French":
            stimulus.text = stim_fr
    TextboxComponent textbox_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.30)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = >
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    CodeComponent code_TextTrial
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the first set of instructions
        TextTrial.setText(instructions['Text_trial'] + str(trial) + "/24")

        # Set the placeholder text for the textboxes based on the selected language
        textbox_1.setText('')
        textbox_1.setPlaceholder(instructions['Placeholder1'])
    TextComponent TextTrial
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_text_timer
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the timer (in seconds)
        timer_task = 60
      Begin Routine:
        # Initialize the timer
        timer_task = time
        routine_timer = core.Clock()
        routine_timer.reset()
      Each Frame:
        # Calculate remaining time
        remaining_time = timer_task - routine_timer.getTime()

        # Show the timer only if there are 10 seconds or less remaining
        if remaining_time <= 15:
            # Update the timer text
            text_timer.setText(f'{remaining_time:.0f}')
            text_timer.setAutoDraw(True)  # Make sure the timer text is drawn
        else:
            text_timer.setAutoDraw(False)  # Hide the timer text

        # End the routine if time is up
        if remaining_time <= 0:
            continueRoutine = False
    TextComponent text_timer
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    CodeComponent LSL_start_trial
      Code Type = Auto->JS
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      Begin Routine:
        marker = f"stimulus_{trial}"
        send_marker(marker)  # Function to send the LSL marker
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Save the responses from the textboxes
        response1 = textbox_1.text

        # Also add them to the data file directly
        thisExp.addData('response1', response1)

        # Ensure the data is saved immediately
        thisExp.nextEntry()
  Routine init
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    CodeComponent logging
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy.logging as logging

        # Set logging level to WARNING to suppress INFO and DEBUG messages
        logging.console.setLevel(logging.WARNING)
    CodeComponent language
      Code Type = Auto->JS
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      Begin Experiment:
        # Check if expInfo exists and create the language variable
        if 'expInfo' not in globals():
            expInfo = {}

        # Set default values to English if it is missing from expInfo keys
        if 'language' not in expInfo:
            expInfo['language'] = 'English'

        # Create the language variable
        language = expInfo.get('language')

        # Define instructions based on the selected language
        if language == "English":
            instructions = {
                'name_task' : 'VOCABULARY',
                'Text_instructions': (
                    "Welcome to the Vocabulary Task.\n\n"
                    "In this task, you will see a word on the screen.\n "
                    "Your objective is to provide a SYNONYM or a DEFINITION of this word as accurately as possible. "
                    "If you are unsure, provide your best guess. "
                    "You will have 30 to 60 seconds to answer, depending on the word.\n\n"
                    "For example: 'COLOSSAL'\n\n"
                    "A synonym might be: 'gigantic'. A definition could be 'Having considerable dimensions, possessing enormous proportions.'\n\n"
                    "Whenever you're ready, press the spacebar to start."
                ),
                'Text_trial': "Word ",
                'Text_end_task': (
                    "This task is now over.\n\nThank you!\n\nPress the space bar to continue"
                ),
                'Placeholder1': "Type your synonym/definition here..."
            }
        else:  # Default to French if any issues
            instructions = {
                'name_task' : 'VOCABULAIRE',
                'Text_instructions': (
                    "Bienvenue dans la tâche de Vocabulaire.\n\n"
                    "Dans cette tâche, vous verrez un mot à l'écran.\n"
                    "Votre objectif est de fournir un SYNONYME ou une DÉFINITION de ce mot aussi précise que possible. "
                    "Si vous n'êtes pas sûr, donnez votre meilleure supposition. "
                    "Vous aurez entre 30 et 60 secondes pour répondre, en fonction du mot.\n\n"
                    "Par exemple : 'COLOSSAL'\n\n"
                    "Un synonyme pourrait être : 'gigantesque'. Une définition pourrait être 'qui a des dimensions considérables, qui a des proportions énormes.'\n\n"
                    "Lorsque vous êtes prêt, appuyez sur la barre d'espace pour commencer."
                ),
                'Text_trial': "Mot ",
                'Text_end_task': (
                    "Cette tâche est maintenant terminée.\n\nMerci !\n\nAppuyez sur la barre d'espace pour continuer"
                ),
                'Placeholder1': "Tapez votre synonyme/définition ici..."
            }
    CodeComponent LSL
      Code Type = Auto->JS
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      Begin Experiment:
        import socket
        import json
        import threading
        from pylsl import local_clock

        # Function to send markers to the LSL server
        def send_marker(marker):
            event = {
                'marker': marker,
                'timestamp': local_clock()
            }
            message = json.dumps(event)

            def send():
                try:
                    # Connect to the socket server and send the marker with a timeout
                    client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                    client_socket.settimeout(0.1)  # Set timeout to 100 milliseconds
                    client_socket.connect(('localhost', 5000))
                    client_socket.sendall(message.encode('utf-8'))
                    client_socket.close()
                except (ConnectionRefusedError, socket.timeout):
                    print("LSL server is not running or connection timed out. Continuing without sending marker.")

            # Create and start a thread to send the marker
            send_thread = threading.Thread(target=send)
            send_thread.start()
    CodeComponent ActivateWindow
      Code Type = Auto->JS
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      Begin Experiment:
        win.winHandle.activate()  # Ensure the PsychoPy window is the primary window
    CodeComponent ActivateMouse
      Code Type = Auto->JS
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      Each Frame:
        # Activate mouse
        event.Mouse(visible=True)
    CodeComponent QuitTask
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import core, event

        # Add a global shutdown key: Ctrl + Q to quit the experiment
        event.globalKeys.add(key='q', modifiers=['ctrl'], func=core.quit)
  Routine end
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    TextComponent InstructionsText4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_InstructionsText4
      Code Type = Auto->JS
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      Begin Routine:
        # Set the text for the third set of instructions
        InstructionsText4.setText(instructions['Text_end_task'])
    CodeComponent LSL_Vocabulary_end
      Code Type = Auto->JS
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      Begin Routine:
        send_marker('Vocabulary_end')
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction1
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    TextComponent TextInstructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    KeyboardComponent go
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instructions
      Code Type = Auto->JS
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      Begin Routine:
        TextInstructions.setText(instructions['Text_instructions'])
    CodeComponent LSL_start_test
      Code Type = Auto->JS
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      End Routine:
        send_marker("Vocabulary_start")
    CodeComponent code_nametask
      Code Type = Auto->JS
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      Begin Routine:
        nametask.setText(instructions['name_task'])
    TextComponent nametask
      letterHeight = 0.06
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine Instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = vocabulary.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_eng', 'book'), ('stim_fr', 'livre'), ('trial', 1)]),
      OrderedDict([('stim_eng', 'plane'), ('stim_fr', 'avion'), ('trial', 2)]),
      OrderedDict([('stim_eng', 'basket'), ('stim_fr', 'panier'), ('trial', 3)]),
      OrderedDict([('stim_eng', 'apple'), ('stim_fr', 'pomme'), ('trial', 4)]),
      OrderedDict([('stim_eng', 'peaceful'), ('stim_fr', 'paisible'), ('trial', 5)]),
      OrderedDict([('stim_eng', 'finish'), ('stim_fr', 'terminer'), ('trial', 6)]),
      OrderedDict([('stim_eng', 'glove'), ('stim_fr', 'gant'), ('trial', 7)]),
      OrderedDict([('stim_eng', 'colossal'), ('stim_fr', 'colossal'), ('trial', 8)]),
      OrderedDict([('stim_eng', 'shelter'), ('stim_fr', 'refuge'), ('trial', 9)]),
      OrderedDict([('stim_eng', 'mirror'), ('stim_fr', 'miroir'), ('trial', 10)]),
      OrderedDict([('stim_eng', 'silence'), ('stim_fr', 'silence'), ('trial', 11)]),
      OrderedDict([('stim_eng', 'referee'), ('stim_fr', 'arbitre'), ('trial', 12)]),
      OrderedDict([('stim_eng', 'vigorous'), ('stim_fr', 'vigoureux'), ('trial', 13)]),
      OrderedDict([('stim_eng', 'precise'), ('stim_fr', 'précis'), ('trial', 14)]),
      OrderedDict([('stim_eng', 'evolve'), ('stim_fr', 'évoluer'), ('trial', 15)]),
      OrderedDict([('stim_eng', 'courage'), ('stim_fr', 'courage'), ('trial', 16)]),
      OrderedDict([('stim_eng', 'copious'), ('stim_fr', 'copieux'), ('trial', 17)]),
      OrderedDict([('stim_eng', 'initiative'), ('stim_fr', 'initiative'), ('trial', 18)]),
      OrderedDict([('stim_eng', 'compassion'), ('stim_fr', 'compassion'), ('trial', 19)])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
    Routine Trial
  LoopTerminator trials
  Routine end
